OpenViBE-Scenario
Comment
  Configurable box
Comment
  Take 10.0 seconds
  Then output 17 classification results ( output each 0.5 sec and began from 2.0 sec)
  2.0 2.5 3.0 3.5 4.0 4.5 5.0 5.5 6.0 6.5 7.0 7.5 8.0 8.5 9.0 9.5 10.0
Comment
  Results calculated from 17 results
   ( output each 0.5 sec and began from 2.0 sec)
  2.0 2.5 3.0 3.5 4.0 4.5 5.0 5.5 6.0 6.5 7.0 7.5 8.0 8.5 9.0 9.5 10.0

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Channel Selector "9;10;11;12;13;14;15;16" => #2
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
#1.Signal stream -> Channel Selector "1;2;3;4;5;6;7;8" => #3
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Start => #4
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
Incoming stimulations=#4 -> P300 Identifier Stimulator(modified) => #5
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 5
  Percent of repetitions containing the target = 100
  Number of repetitions = 10
  Number of trials = 4
  Flash duration (in sec) = 0.100
  No flash duration (in sec) = 0.200
  Inter-repetition delay (in sec) = 0
  Inter-trial delay (in sec) = 5
Data=#1.Signal stream, Stimulations=#5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#5 -> P300 Identifier Target Generation (modified)
  Lua Script = ${Player_ScenarioDirectory}/Luascript/original-p300-identifier-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 3
-> Stimulation Filter (P300-TARGET) => #8
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-TARGET)
  Host = localhost
  Port = 20322
#5 -> Stimulation Filter (P300-Stimulation) => #10
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-Stimulation)
  Host = localhost
  Port = 20321
#5 -> Stimulation Filter (Trial Start&Stop) => #12
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> UDP Sender (Trial Start&Stop)
  Host = localhost
  Port = 20326
Input stream 1=#10, Input stream 2=#8, Input stream 3=#12 -> Identity => #14
Input stream 1=#3, Input stream 2=#5 -> Identity => #15
Input stream 1=#15.Output stream 1, Input stream 2=#15.Output stream 2 -> Identity => #16
#16.Output stream 1 -> Signal Decimation => #17
  Decimation factor = 4
Input signal=#17, Input stimulations=#16.Output stream 2 -> Stimulation based epoching => #18
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#18.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-4ch] ExperimentalSignalFiles/[3] p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #21
  Filename to load configuration from = ${Player_ScenarioDirectory}/[2-4ch] ClassifierFiles/[2015.12.15-14.24.25]-p300-classifier.cfg
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2-4ch] ClassifierFiles/[2] p300-classifier-processor.cfg
Input signal=#17, Input stimulations=#16.Output stream 2 -> Stimulation based epoching => #22
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#22.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-4ch] ExperimentalSignalFiles/[3] p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #25
  Filename to load configuration from = ${Player_ScenarioDirectory}/[2-4ch] ClassifierFiles/[2015.12.15-14.24.25]-p300-classifier.cfg
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2-4ch] ClassifierFiles/[2] p300-classifier-processor.cfg
Input signal=#17, Input stimulations=#16.Output stream 2 -> Stimulation based epoching => #26
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#26.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-4ch] ExperimentalSignalFiles/[3] p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #29
  Filename to load configuration from = ${Player_ScenarioDirectory}/[2-4ch] ClassifierFiles/[2015.12.15-14.24.25]-p300-classifier.cfg
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2-4ch] ClassifierFiles/[2] p300-classifier-processor.cfg
Input signal=#17, Input stimulations=#16.Output stream 2 -> Stimulation based epoching => #30
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#30.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-4ch] ExperimentalSignalFiles/[3] p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #33
  Filename to load configuration from = ${Player_ScenarioDirectory}/[2-4ch] ClassifierFiles/[2015.12.15-14.24.25]-p300-classifier.cfg
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2-4ch] ClassifierFiles/[2] p300-classifier-processor.cfg
Classification result 0=#21.Hyperplane distance, Classification result 1=#25.Hyperplane distance, Classification result 2=#29.Hyperplane distance, Classification result 3=#33.Hyperplane distance -> P300 Voting Classifier
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation Filter (P300-Classification-Result) => #35
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_04
-> UDP Sender (P300-Classification-Result)
  Host = localhost
  Port = 20323
#35 -> CSV File Writer "CSV Writer (P300-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[$core{date}-$core{time}]P300ClassificationResult.csv
  Column separator = ;
  Precision = 10
#4 -> UDP Sender (Experiment Start & Stop)
  Host = localhost
  Port = 20324
#4 -> SSVEP Training Controller => #39
  Lua Script = ${Player_ScenarioDirectory}/scripts/[2] SSVEP-stimulus-generator.lua
  Goal sequence = 1 2 3 4
  Stimulation duration = 7.5
  Break duration = 3
  Flickering delay = 2.000000
#39.Stimulations -> 0xc73e83ec Stimulation Filter (VisualStimulation Start&Stop)
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_VisualStimulationStart
  Stimulation range end = OVTK_StimulationId_VisualStimulationStop
-> 0xc73e83ec UDP Sender (VisualStimulation Start&Stop)
  Host = localhost
  Port = 20326
#39.New output -> 0xc73e83ec UDP Sender (SSVEP Target Number)
  Host = localhost
  Port = 20322
Input signal=#2, Input stimulations=#39.Stimulations -> Stimulation based epoching => #43
  Epoch duration (in sec) = 10.00000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
#43.Epoched signal -> (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal.csv
  Column separator = ;
  Precision = 10
#43.Epoched signal -> Spatial Filter 1
  Spatial Filter Coefficients = -7.831878e-002 -1.298724e-001 1.514725e-001 -4.919546e-001 -8.040827e-002 -4.031377e-002 -1.036721e-001 7.944795e-001 2.776373e-004 -1.650207e-002 -1.013357e-001 2.268445e-001 1.812319e-002 -3.087814e-001 -5.656761e-001 -3.004974e-001 -1.613332e-001 2.760015e-001 5.737479e-001 -1.068685e-001 1.856993e-001 1.283123e-001 6.051049e-004 -1.661579e-002
  Number of Output Channels = 2
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9
  High cut frequency (Hz) = 11
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 1 => #52
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-1.cfg
#43.Epoched signal -> Spatial Filter 2
  Spatial Filter Coefficients = 1.888445e-001 -3.881107e-001 4.054893e-001 -2.611682e-002 -1.965808e-001 1.699183e-001 -1.624194e-002 -2.572215e-001 -1.332766e-001 3.951460e-001 -4.931747e-001 3.123092e-001 -1.105532e-002 -7.808432e-003 -4.252959e-001 -2.326771e-001 -8.312392e-003 3.277885e-002 8.929797e-002 -1.170533e-001 -2.068234e-002 -3.887460e-002 -1.748447e-001 8.423021e-001
  Number of Output Channels = 2
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 2 => #60
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-2.cfg
#43.Epoched signal -> Spatial Filter 3
  Spatial Filter Coefficients = 6.317646e-002 -2.789441e-001 -2.758524e-001 1.427637e-001 3.253396e-002 2.262662e-001 -5.321258e-002 -4.314417e-001 4.594981e-001 1.112346e-001 -4.714637e-001 3.670214e-001 -1.676887e-002 -2.124136e-002 -5.482119e-001 -2.754025e-001 1.185241e-001 -3.424090e-003 9.205367e-002 -3.674768e-003 -5.714076e-002 -6.525724e-002 -5.893813e-002 7.676851e-001
  Number of Output Channels = 2
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 3 => #68
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-3.cfg
#43.Epoched signal -> Spatial Filter 4
  Spatial Filter Coefficients = -8.621440e-002 -1.809979e-001 -3.881215e-001 -1.663291e-001 2.608830e-001 2.273308e-001 -1.092756e-001 -7.784745e-002 -1.386216e-001 -1.233542e-001 1.828342e-002 7.803820e-001 6.921070e-002 -1.696863e-001 2.606043e-001 -2.681394e-001 2.738859e-001 -5.655438e-001 -3.072228e-001 4.382787e-001 -5.642279e-002 -2.022363e-001 1.323554e-001 2.892659e-001
  Number of Output Channels = 2
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 21
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 4 => #76
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-4.cfg
Classification result 0=#52.Hyperplane distance, Classification result 1=#60.Hyperplane distance, Classification result 2=#68.Hyperplane distance, Classification result 3=#76.Hyperplane distance -> SSVEP Voting Classifier (17) => #77
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation listener "Result SSVEP Voting Classifier (17)"
  Log level to use = Information
#77 -> CSV File Writer "CSV Writer (SSVEP-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[3-4ch] ExperimentalSignalFiles/[$core{date}-$core{time}]SSVEPClassificationResult.csv
  Column separator = ;
  Precision = 10
#43.Epoched signal -> Spatial Filter "Average"
  Spatial filter coefficients = 1;1;1;1;1;1;1;1;1;1;1;1
  Number of output channels = 1
  Number of input channels = 12
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spectral analysis => #84
  Spectral components = Amplitude
#84.Amplitude -> 0xc67a01dc (FFT spectral) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPFFTSpectralSignal.csv
  Column separator = ;
  Precision = 10
#84.Amplitude -> FFT of average signal
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Input stream 1=#1.Signal stream, Input stream 2=#4 -> Identity => #87
Input stream 1=#2, Input stream 5[4]=#39.Stimulations, Input stream 6[5]=#87.Output stream 2 -> Generic stream writer "Ch9-16(SSVEP)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[$core{date}-$core{time}]SSVEP-record.ov
  Use compression = false
Input stream 1=#15.Output stream 1, Input stream 3=#14.Output stream 1, Input stream 5[2]=#14.Output stream 2, Input stream 6[3]=#14.Output stream 3, Input stream 6[5]=#87.Output stream 2 -> Generic stream writer "Ch1-8(P300)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[$core{date}-$core{time}]P300-record.ov
  Use compression = false
Input stream 1=#87.Output stream 1, Input stream 3=#14.Output stream 1, Input stream 5[2]=#14.Output stream 2, Input stream 6[3]=#14.Output stream 3, Input stream 5[4]=#39.Stimulations, Input stream 6[5]=#87.Output stream 2 -> Generic stream writer "Summerized"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[$core{date}-$core{time}]summerized-record.ov
  Use compression = false
