OpenViBE-Scenario
Comment
  PersonalData (ov+cfg)/[6] AcquiredSignal(ALL).cfg
Comment
  Take 16Ch for trial duration (7.5 seconds)
  256Hz * 7.5sec * 4trials = 7680 plots
Comment
  Target and NonTarget Stimulus in duration
  256 * 0.7 = 179 plots
  TARGET = 5 times * 4 trials * 179 plots = 3580 plots
  NonTARGET = 20 times * 4 trials * 179 plots = 14320 plots
Comment
  Take signal from 1.5 to 7.5 seconds (6.0 seconds) * 4 stimuli
  6.0 sec * 4 stimuli = 24.0 sec
  Totally: 256 Hz * 24.0 sec = 6144 plots
Comment
  Target and NonTarget Stimulus for Target1
  256 * 0.7 = 179 plots
  TARGET = 5 times * 179 plots = 895 plots
  NonTARGET = 15 times * 179 plots = 2685 plots
Comment
  Take 17 durations (1.2 sec window in each 0.3 sec) * 4 stimuli each
  (2.7 3.0 3.3 3.6 3.9 4.2 4.5 4.8 5.1 5.4 5.7 6.0 6.3 6.6 6.9 7.2 7.5)
  256 Hz * 1.2 sec = 307.2 -> 307 plots
  307 plots * 17 outputs =  5219 plots
  5219 plots * 4 stimuli = 20876 plots
Comment
  Average those 17 durations * 4 stimuli => 68 plots each
Comment
  Should be 2 features * 68 datas (17 durations * 4 stimuli)
  CSP filtered (8 chs) => 2 features

0xc67a01dc Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/../PersonalData (ov+cfg)/[6] AcquiredSignal(Trial1)[2016.02.03-09.48.00].ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/../PersonalData (ov+cfg)/[6] AcquiredSignal(Trial4).cfg
#0.Output stream 2 -> Stimulation Filter "2: Stimulation sequence" => #1
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
#0.Output stream 3 -> Stimulation Filter "3: Target Stimuli" => #2
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_04
Input stream 1=#0.Output stream 1, Input stream 2=#1, Input stream 3=#2 -> Identity => #3
#3.Output stream 1 -> Channel Selector "1;2;3;4;5;6;7;8" => #4
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#4, Input stream 2=#3.Output stream 3 -> Identity "Target" => #5
#5.Output stream 1 -> Identity => #6
#5.Output stream 1 -> Identity => #7
#5.Output stream 1 -> Identity => #8
#5.Output stream 1 -> Identity => #9
#4 -> Identity "256Hz" => #10
#4 -> Identity "256Hz" => #11
#3.Output stream 2 -> Stimulation Filter "Stimulus 1" => #12
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
New input[0]=#12, New input[1]=#5.Output stream 2 -> Target-NonTarget-Separator => #13
  Lua Script = ${Player_ScenarioDirectory}/../[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#6, Input stimulations=#13.New output -> Stimulation based epoching "SBE 0.0-0.7 (Graph)" => #14
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#14.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_NonTarget1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#6, Input stimulations=#13.Stimulations -> Stimulation based epoching "SBE 0.0-0.7 (Graph)" => #16
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#16.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_Target1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#3.Output stream 2 -> Stimulation Filter "Stimulus 2" => #18
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
New input[0]=#18, New input[1]=#5.Output stream 2 -> Target-NonTarget-Separator => #19
  Lua Script = ${Player_ScenarioDirectory}/../[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#7, Input stimulations=#19.Stimulations -> Stimulation based epoching "SBE 0.0-0.7 (Graph)" => #20
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#20.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_Target2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#7, Input stimulations=#19.New output -> Stimulation based epoching "SBE 0.0-0.7 (Graph)" => #22
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#22.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_NonTarget2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stimulations 1=#13.Stimulations, Input stimulations 2=#19.Stimulations -> Stimulation multiplexer => #24
Input signal=#10, Input stimulations=#24 -> Stimulation based epoching "SBE 0.0-0.4 (Graph)" => #25
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#25.Epoched signal -> CSV File Writer "SBE_TargetA"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_TargetA[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stimulations 1=#13.New output, Input stimulations 2=#19.New output -> Stimulation multiplexer => #27
Input signal=#10, Input stimulations=#27 -> Stimulation based epoching "SBE 0.0-0.4 (Graph)" => #28
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#28.Epoched signal -> CSV File Writer "SBE_NonTargetA"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_NonTargetA[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#3.Output stream 2 -> Stimulation Filter "Stimulus 3" => #30
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#30, New input[1]=#5.Output stream 2 -> Target-NonTarget-Separator => #31
  Lua Script = ${Player_ScenarioDirectory}/../[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#8, Input stimulations=#31.Stimulations -> Stimulation based epoching "SBE 0.0-0.7 (Graph)" => #32
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#32.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_Target3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#8, Input stimulations=#31.New output -> Stimulation based epoching "SBE 0.0-0.7 (Graph)" => #34
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#34.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_NonTarget3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#3.Output stream 2 -> Stimulation Filter "Stimulus 4" => #36
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#36, New input[1]=#5.Output stream 2 -> Target-NonTarget-Separator => #37
  Lua Script = ${Player_ScenarioDirectory}/../[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#9, Input stimulations=#37.Stimulations -> Stimulation based epoching "SBE 0.0-0.7 (Graph)" => #38
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#38.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_Target4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#9, Input stimulations=#37.New output -> Stimulation based epoching "SBE 0.0-0.7 (Graph)" => #40
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#40.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_NonTarget4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stimulations 1=#31.Stimulations, Input stimulations 2=#37.Stimulations -> Stimulation multiplexer => #42
Input signal=#11, Input stimulations=#42 -> Stimulation based epoching "SBE 0.0-0.4 (Graph)" => #43
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#43.Epoched signal -> CSV File Writer "SBE_TargetB"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_TargetB[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stimulations 1=#31.New output, Input stimulations 2=#37.New output -> Stimulation multiplexer => #45
Input signal=#11, Input stimulations=#45 -> Stimulation based epoching "SBE 0.0-0.4 (Graph)" => #46
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#46.Epoched signal -> CSV File Writer "SBE_NonTargetB"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_NonTargetB[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#0.Output stream 1 -> Channel Selector "1;5;6" => #48
  Channel List = 1;5;6
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #49
#49.Output stream 2 -> Stimulation Filter "Stimulus 1" => #50
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
#49.Output stream 2 -> Stimulation Filter "Stimulus 2" => #51
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
#49.Output stream 3 -> Stimulation Filter "Stimulus 1-4+5" => #52
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
New input[0]=#50, New input[1]=#52 -> Target-NonTarget-Separator => #53
  Lua Script = ${Player_ScenarioDirectory}/../[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
New input[0]=#51, New input[1]=#52 -> Target-NonTarget-Separator => #54
  Lua Script = ${Player_ScenarioDirectory}/../[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input stimulations 1=#53.Stimulations, Input stimulations 2=#54.Stimulations -> Stimulation multiplexer => #55
Input signal=#48, Input stimulations=#55 -> Stimulation based epoching "[5] SBE_Duration-0.2_Offset-0.1.cfg" => #56
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
#56.Epoched signal -> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_TargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#56.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_TargetA(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#49.Output stream 2 -> Stimulation Filter "Stimulus 3" => #60
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#60, New input[1]=#52 -> Target-NonTarget-Separator => #61
  Lua Script = ${Player_ScenarioDirectory}/../[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
#49.Output stream 2 -> Stimulation Filter "Stimulus 4" => #62
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#62, New input[1]=#52 -> Target-NonTarget-Separator => #63
  Lua Script = ${Player_ScenarioDirectory}/../[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input stimulations 1=#61.Stimulations, Input stimulations 2=#63.Stimulations -> Stimulation multiplexer => #64
Input signal=#48, Input stimulations=#64 -> Stimulation based epoching "[5] SBE_Duration-0.2_Offset-0.1.cfg" => #65
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
#65.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_TargetB(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#65.Epoched signal -> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_TargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#49.Output stream 1 -> Identity => #69
New input[0]=#49.Output stream 2, New input[1]=#49.Output stream 3 -> Target-NonTarget-Separator => #70
  Lua Script = ${Player_ScenarioDirectory}/../[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#69, Input stimulations=#70.Stimulations -> Stimulation based epoching "[5] SBE_Duration-0.7_Offset-0.0.cfg" => #71
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#71.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-AllTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#69, Input stimulations=#70.New output -> Stimulation based epoching "[5] SBE_Duration-0.7_Offset-0.0.cfg" => #73
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
#73.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-AllNonTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 1 -> Channel Selector "1;2;3;4;5;6;7;8" => #75
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#75, Input stream 2=#0.Output stream 5 -> Identity => #76
#76.Output stream 1 -> Temporal filter "[5] LowPASS-9Hz.cfg"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #78
  Decimation factor = 4
#76.Output stream 2 -> Identity => #79
Input signal=#78, Input stimulations=#79 -> Stimulation based epoching "SBE Label1 (0.1-0.3)" => #80
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#80.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_Label1(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#78, Input stimulations=#79 -> Stimulation based epoching "SBE Label1 (0.4-0.6)" => #83
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#83.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_Label1(0.4-0.6)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#78, Input stimulations=#79 -> Stimulation based epoching "SBE Label2 (0.1-0.3)" => #86
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#86.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_Label2(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#78, Input stimulations=#79 -> Stimulation based epoching "SBE Label2 (0.4-0.6)" => #89
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#89.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_Label2(0.4-0.6)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#78, Input stimulations=#79 -> Stimulation based epoching "SBE Label3 (0.1-0.3)" => #92
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#92.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_Label3(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#78, Input stimulations=#79 -> Stimulation based epoching "SBE Label3 (0.4-0.6)" => #95
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#95.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_Label3(0.4-0.6)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#78, Input stimulations=#79 -> Stimulation based epoching "SBE Label4 (0.1-0.3)" => #98
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#98.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_Label4(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#78, Input stimulations=#79 -> Stimulation based epoching "SBE Label4 (0.4-0.6)" => #101
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#101.Epoched signal -> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-classifierTrial_Label4(0.4-0.6)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#76.Output stream 1, Input stimulations=#76.Output stream 2 -> Stimulation based epoching "SBE Label1 (0.1-0.3)" => #104
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#104.Epoched signal -> CSV File Writer "SBE"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_Label1(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#76.Output stream 1, Input stimulations=#76.Output stream 2 -> Stimulation based epoching "SBE Label1 (0.4-0.6)" => #106
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#106.Epoched signal -> CSV File Writer "SBE"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_Label1(0.4-0.6)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#76.Output stream 1, Input stimulations=#76.Output stream 2 -> Stimulation based epoching "SBE Label2 (0.1-0.3)" => #108
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#108.Epoched signal -> CSV File Writer "SBE"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_Label2(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#76.Output stream 1, Input stimulations=#76.Output stream 2 -> Stimulation based epoching "SBE Label2 (0.4-0.6)" => #110
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#110.Epoched signal -> CSV File Writer "SBE"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_Label2(0.4-0.6)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#76.Output stream 1, Input stimulations=#76.Output stream 2 -> Stimulation based epoching "SBE Label3 (0.1-0.3)" => #112
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#112.Epoched signal -> CSV File Writer "SBE"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_Label3(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#76.Output stream 1, Input stimulations=#76.Output stream 2 -> Stimulation based epoching "SBE Label3 (0.4-0.6)" => #114
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#114.Epoched signal -> CSV File Writer "SBE"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_Label3(0.4-0.6)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#76.Output stream 1, Input stimulations=#76.Output stream 2 -> Stimulation based epoching "SBE Label4 (0.1-0.3)" => #116
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#116.Epoched signal -> CSV File Writer "SBE"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_Label4(0.1-0.3)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#76.Output stream 1, Input stimulations=#76.Output stream 2 -> Stimulation based epoching "SBE Label4 (0.4-0.6)" => #118
  Epoch duration (in sec) = 0.200000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#118.Epoched signal -> CSV File Writer "SBE"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_Label4(0.4-0.6)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Data=#0.Output stream 1, Stimulations=#0.Output stream 5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Output stream 1 -> Channel Selector "9;10;11;12;13;14;15;16" => #121
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
Input signal=#121, Input stimulations=#0.Output stream 5 -> Stimulation based epoching "[6] SBE_Duration-6.0_Offset-1.5.cfg" => #122
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.5
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
#122.Epoched signal -> Spatial Filter 1
  Spatial Filter Coefficients = -1.462972e-001 -7.246848e-001 2.259448e-001 3.696417e-002 3.290125e-002 -8.457478e-004 -1.097567e-001 6.228017e-001 -2.147245e-001 -2.178566e-001 5.957404e-002 -8.181576e-002 2.885516e-001 -4.264748e-001 -1.155258e-001 7.859389e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/../PersonalData (ov+cfg)/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 7.9999
  Pass band ripple (dB) = 0.5
-> Time based epoching "[4] TBE_Duration-1.2_Window-0.3.cfg"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] SSVEP-classifierTest_Target1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#122.Epoched signal -> Spatial Filter 2
  Spatial Filter Coefficients = -1.400111e-001 -1.192449e-001 3.476082e-001 5.865646e-002 -7.496528e-001 -1.611613e-001 4.727179e-001 1.746170e-001 -1.201520e-001 -2.113312e-001 3.369834e-001 -1.482437e-001 -4.599632e-001 3.903929e-001 5.735882e-001 -3.352497e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/../PersonalData (ov+cfg)/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 15.9999
  Pass band ripple (dB) = 0.5
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] SSVEP-classifierTest_Target2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#122.Epoched signal -> Spatial Filter 3
  Spatial Filter Coefficients = 5.522216e-001 -5.811046e-001 -4.023349e-001 2.337991e-002 -1.324832e-001 3.654531e-001 -1.071097e-001 1.799128e-001 5.412140e-001 3.982339e-001 -4.161684e-001 -4.465311e-001 1.192174e-001 2.838478e-001 -6.486476e-002 -2.773468e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/../PersonalData (ov+cfg)/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] SSVEP-classifierTest_Target3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#122.Epoched signal -> Spatial Filter 4
  Spatial Filter Coefficients = 1.435320e-001 -2.138980e-002 -2.232115e-001 4.152887e-002 -6.289001e-001 1.167232e-003 7.155191e-001 1.410982e-001 2.633258e-001 1.930058e-002 -7.882889e-001 -3.327035e-001 2.885877e-001 2.609136e-001 2.114309e-001 4.619747e-002
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/../PersonalData (ov+cfg)/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 20.9999
  Pass band ripple (dB) = 0.5
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] SSVEP-classifierTest_Target4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#0.Output stream 1, Input stimulations=#0.Output stream 5 -> Stimulation based epoching "[6] SBE_Duration-7.5_Offset-0.0.cfg" => #155
  Epoch duration (in sec) = 7.5
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
#155.Epoched signal -> (During Trial) Trial CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] TrialRawSignal(16ch_7.5sec)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10

Temporal filter "LowPASS 9Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4
  Decimation factor = 4
