OpenViBE-Scenario
Comment
  Take 8ch for SSVEP (12.0 seconds -> 3.0 to 15.0 seconds)
   ( SSVEP signal began from 3.0 sec)
Comment
  Take 16Ch for trial duration (15 seconds)

Generic stream reader
  Filename =

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Channel Selector "9;10;11;12;13;14;15;16" => #2
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
Start => #3
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
Incoming stimulations=#3 -> P300 Identifier Stimulator(modified) => #4
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 5
  Percent of repetitions containing the target = 100
  Number of repetitions = 10
  Number of trials = 4
  Flash duration (in sec) = 0.100
  No flash duration (in sec) = 0.200
  Inter-repetition delay (in sec) = 0
  Inter-trial delay (in sec) = 5
-> P300 Identifier Target Generation (modified) => #5
  Lua Script = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] (add0)original-P300-identifier-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 3
-> Stimulation Filter (P300-TARGET) => #6
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-TARGET)
  Host = localhost
  Port = 20322
#6 -> Stimulation listener (P300-TARGET)
  Log level to use = Information
Sequence stimulations=#4, Target stimulations=#5 -> P300 Identifier Card Visualisation => #9
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-identifier-card.ui
  Background color = 0,0,0
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Background Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/01.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/02.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/03.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
  Card filename =
  Card filename =
  Card filename =
Data=#1.Signal stream, Stimulations=#4 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#4 -> Identity => #11
Input signal=#2, Input stimulations=#11 -> 0xc73e83ec Stimulation based epoching => #12
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#12.Epoched signal -> 0xc73e83ec (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal(8ch_12sec).csv
  Column separator = ,
  Precision = 10
#12.Resynced stimulations -> 0xc73e83ec Stimulation listener (SBE)
  Log level to use = Information
#12.Epoched signal -> 0xc73e83ec Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 7.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
-> 0xc73e83ec (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal_Filtered1.csv
  Column separator = ;
  Precision = 10
#12.Epoched signal -> 0xc73e83ec Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
-> 0xc73e83ec (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal_Filtered2.csv
  Column separator = ;
  Precision = 10
#12.Epoched signal -> 0xc73e83ec Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 15.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
-> 0xc73e83ec (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal_Filtered3.csv
  Column separator = ;
  Precision = 10
#12.Epoched signal -> 0xc73e83ec Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 20.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
-> 0xc73e83ec (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal_Filtered4.csv
  Column separator = ;
  Precision = 10
#11 -> 0xc67a01dc FlickerStimulationDelay_forAcquring => #23
  Lua Script = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] FlickerStimulationDelay_forAcquiring.lua
  Trigger Stimulus = OVTK_StimulationId_TrialStart
  To Send Stimulus = OVTK_StimulationId_VisualStimulationStart
-> UDP Sender (SSVEP Flicker Start)
  Host = localhost
  Port = 20327
#23 -> Stimulation listener (SSVEP Flicker Start)
  Log level to use = Information
#11 -> Stimulation Filter (P300Trial Start&Stop) => #26
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> UDP Sender (P300Trial Start&Stop)
  Host = localhost
  Port = 20326
#26 -> Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
#4 -> Stimulation Filter (P300-Stimulation) => #29
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-Stimulation)
  Host = localhost
  Port = 20321
#29 -> Stimulation listener (P300-Stimulation)
  Log level to use = Information
Input stream 1=#29, Input stream 2=#6, Input stream 3=#9, Input stream 4=#11 -> Identity => #32
#3 -> UDP Sender (Experiment Start)
  Host = localhost
  Port = 20324
Input stream 1=#1.Signal stream, Input stream 2=#3 -> Identity => #34
Input signal=#34.Output stream 1, Input stimulations=#11 -> 0xc73e83ec Stimulation based epoching => #35
  Epoch duration (in sec) = 15.0
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-15.0_Offset-0.0.cfg
#35.Epoched signal -> 0xc73e83ec (During Trial) Trial CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]TrialRawSignal(16ch_15sec).csv
  Column separator = ,
  Precision = 10
Input stream 1=#34.Output stream 1, Input stream 3=#32.Output stream 1, Input stream 5[2]=#32.Output stream 2, Input stream 6=#32.Output stream 3, Input stream 5[4]=#32.Output stream 4, Input stream 7=#34.Output stream 2 -> Generic stream writer "Ch1-16(All)"
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[$core{date}-$core{time}]AcquiredSignal(Trial).ov
  Use compression = false
