OpenViBE-Scenario
Comment
  [2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg
Comment
  Take 8ch for SSVEP (12.0 seconds -> 3.0 to 15.0 seconds)
   ( SSVEP signal began from 3.0 sec)
  256Hz * 12sec * 4trials = 12288 plots
Comment
  Take 16Ch for trial duration (15 seconds)
  256Hz * 15sec * 4trials = 15360 plots

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2016.01.23-14.16.18]AcquiredSignal(ALL).ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg
#0.Output stream 1 -> Channel Selector "9;10;11;12;13;14;15;16" => #1
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
Input signal=#1, Input stimulations=#0.Output stream 5 -> Stimulation based epoching => #2
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#2.Epoched signal -> (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal(8ch_12sec).csv
  Column separator = ,
  Precision = 10
Data=#1, Stimulations=#0.Output stream 3 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Output stream 3 -> Stimulation Filter (P300-TARGET) => #5
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> Stimulation listener (P300-TARGET)
  Log level to use = Information
#0.Output stream 5 -> Stimulation Filter (P300Trial Start&Stop) => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
Input stream 1=#1, Input stream 2=#5, Input stream 3=#7 -> Identity => #9
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2, Input stream 3=#9.Output stream 3 -> Identity => #10
#10.Output stream 1 -> Temporal filter "Frequency 1" => #11
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 7.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
New input[0]=#10.Output stream 2, New input[1]=#10.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #12
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 1
  Non Targets = 2 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#11, Input stimulations=#12.Stimulations -> Stimulation based epoching "SBE" => #13
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#13.Epoched signal -> 0xc73e83ec CSV File Writer "SBE_SSVEP_Target1"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-Target1.csv
  Column separator = ;
  Precision = 10
Input signal=#11, Input stimulations=#12.New output -> Stimulation based epoching "SBE" => #15
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#15.Epoched signal -> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTarget1"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTarget1.csv
  Column separator = ;
  Precision = 10
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2, Input stream 3=#9.Output stream 3 -> Identity => #17
#17.Output stream 1 -> Temporal filter "Frequency 2" => #18
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
New input[0]=#17.Output stream 2, New input[1]=#17.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #19
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 2
  Non Targets = 1 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#18, Input stimulations=#19.Stimulations -> Stimulation based epoching "SBE" => #20
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#20.Epoched signal -> 0xc73e83ec CSV File Writer "SBE_SSVEP_Target2"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-Target2.csv
  Column separator = ;
  Precision = 10
Input signal=#18, Input stimulations=#19.New output -> Stimulation based epoching "SBE" => #22
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#22.Epoched signal -> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTarget2"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTarget2.csv
  Column separator = ;
  Precision = 10
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2, Input stream 3=#9.Output stream 3 -> Identity => #24
#24.Output stream 1 -> Temporal filter "Frequency 3" => #25
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 15.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
New input[0]=#24.Output stream 2, New input[1]=#24.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #26
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 3
  Non Targets = 1 2 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#25, Input stimulations=#26.Stimulations -> Stimulation based epoching "SBE" => #27
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#27.Epoched signal -> 0xc73e83ec CSV File Writer "SBE_SSVEP_Target3"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-Target3.csv
  Column separator = ;
  Precision = 10
Input signal=#25, Input stimulations=#26.New output -> Stimulation based epoching "SBE" => #29
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#29.Epoched signal -> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTarget3"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTarget3.csv
  Column separator = ;
  Precision = 10
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2, Input stream 3=#9.Output stream 3 -> Identity => #31
#31.Output stream 1 -> Temporal filter "Frequency 4" => #32
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 20.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
New input[0]=#31.Output stream 2, New input[1]=#31.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #33
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 4
  Non Targets = 1 2 3
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#32, Input stimulations=#33.Stimulations -> Stimulation based epoching "SBE" => #34
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#34.Epoched signal -> 0xc73e83ec CSV File Writer "SBE_SSVEP_Target4"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-Target4.csv
  Column separator = ;
  Precision = 10
Input signal=#32, Input stimulations=#33.New output -> Stimulation based epoching "SBE" => #36
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#36.Epoched signal -> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTarget4"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTarget4.csv
  Column separator = ;
  Precision = 10
Input signal=#0.Output stream 1, Input stimulations=#0.Output stream 5 -> Stimulation based epoching => #38
  Epoch duration (in sec) = 15.0
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-15.0_Offset-0.0.cfg
#38.Epoched signal -> (During Trial) Trial CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]TrialRawSignal(16ch_15sec).csv
  Column separator = ,
  Precision = 10
0xc67a01dc Timeout 150sec => #40
  Timeout delay = 150
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#40, Signal condition 1=#13.Epoched signal, Signal condition 2=#15.Epoched signal -> CSP Spatial Filter Trainer 1 => #41
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-1.cfg
  Filter dimension = 2
  Save as box config = true
Stimulations=#40, Signal condition 1=#20.Epoched signal, Signal condition 2=#22.Epoched signal -> CSP Spatial Filter Trainer 2 => #42
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-2.cfg
  Filter dimension = 2
  Save as box config = true
Stimulations=#40, Signal condition 1=#27.Epoched signal, Signal condition 2=#29.Epoched signal -> CSP Spatial Filter Trainer 3 => #43
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-3.cfg
  Filter dimension = 2
  Save as box config = true
Stimulations=#40, Signal condition 1=#34.Epoched signal, Signal condition 2=#36.Epoched signal -> CSP Spatial Filter Trainer 4 => #44
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-4.cfg
  Filter dimension = 2
  Save as box config = true
New input[0]=#41, New input[1]=#42, New input[2]=#43, New input[3]=#44 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
