OpenViBE-Scenario
Comment
  PersonalData (ov+cfg)/[2] AcquiredSignal(ALL).cfg
Comment
  Take 16Ch for trial duration (15 seconds)
  256Hz * 15sec * 4trials = 15360 plots

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(Training-Hybrid)[2016.02.03-09.28.38].ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(Training).cfg
#0.Output stream 1 -> Channel Selector "9;10;11;12;13;14;15;16" => #1
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
Data=#1, Stimulations=#0.Output stream 3 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Output stream 3 -> Stimulation Filter (P300-TARGET) => #3
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> Stimulation listener (P300-TARGET)
  Log level to use = Information
#0.Output stream 5 -> Stimulation Filter (P300Trial Start&Stop) => #5
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
Input stream 1=#1, Input stream 2=#3, Input stream 3=#5 -> Identity => #7
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #8
#8.Output stream 1 -> Temporal filter "Frequency 1" => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 7.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
New input[0]=#8.Output stream 2, New input[1]=#8.Output stream 3, New input[2]=#0.Output stream 2 -> StimuliSwitch => #10
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] StimuliSwitch.lua
  Targets = 1
  Non Targets = 2 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#9, Input stimulations=#10.Stimulations -> Stimulation based epoching "SBE (0.0-0.3)" => #11
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#9, Input stimulations=#10.New output[1] -> Stimulation based epoching "SBE (0.1-0.3)" => #12
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#11.Epoched signal, Input stream 2=#12.Epoched signal -> Streamed matrix multiplexer => #13
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_Target1"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-Target1.csv
  Column separator = ;
  Precision = 10
Input signal=#9, Input stimulations=#10.New output[2] -> Stimulation based epoching "SBE (0.0-0.3)" => #15
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#9, Input stimulations=#10.New output[3] -> Stimulation based epoching "SBE (0.1-0.3)" => #16
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#15.Epoched signal, Input stream 2=#16.Epoched signal -> Streamed matrix multiplexer => #17
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTarget1"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTarget1.csv
  Column separator = ;
  Precision = 10
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #19
#19.Output stream 1 -> Temporal filter "Frequency 2" => #20
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 7.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
New input[0]=#19.Output stream 2, New input[1]=#19.Output stream 3, New input[2]=#0.Output stream 2 -> StimuliSwitch => #21
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] StimuliSwitch.lua
  Targets = 1
  Non Targets = 2 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#20, Input stimulations=#21.Stimulations -> Stimulation based epoching "SBE (0.0-0.3)" => #22
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#20, Input stimulations=#21.New output[1] -> Stimulation based epoching "SBE (0.1-0.3)" => #23
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#22.Epoched signal, Input stream 2=#23.Epoched signal -> Streamed matrix multiplexer => #24
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_Target2"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-Target2.csv
  Column separator = ;
  Precision = 10
Input signal=#20, Input stimulations=#21.New output[2] -> Stimulation based epoching "SBE (0.0-0.3)" => #26
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#20, Input stimulations=#21.New output[3] -> Stimulation based epoching "SBE (0.1-0.3)" => #27
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#26.Epoched signal, Input stream 2=#27.Epoched signal -> Streamed matrix multiplexer => #28
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTarget2"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTarget2.csv
  Column separator = ;
  Precision = 10
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #30
#30.Output stream 1 -> Temporal filter "Frequency 3" => #31
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
New input[0]=#30.Output stream 2, New input[1]=#30.Output stream 3, New input[2]=#0.Output stream 2 -> StimuliSwitch => #32
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] StimuliSwitch.lua
  Targets = 1
  Non Targets = 2 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#31, Input stimulations=#32.Stimulations -> Stimulation based epoching "SBE (0.0-0.3)" => #33
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#31, Input stimulations=#32.New output[1] -> Stimulation based epoching "SBE (0.1-0.3)" => #34
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#33.Epoched signal, Input stream 2=#34.Epoched signal -> Streamed matrix multiplexer => #35
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_Target3"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-Target3.csv
  Column separator = ;
  Precision = 10
Input signal=#31, Input stimulations=#32.New output[2] -> Stimulation based epoching "SBE (0.0-0.3)" => #37
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#31, Input stimulations=#32.New output[3] -> Stimulation based epoching "SBE (0.1-0.3)" => #38
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#37.Epoched signal, Input stream 2=#38.Epoched signal -> Streamed matrix multiplexer => #39
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTarget3"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTarget3.csv
  Column separator = ;
  Precision = 10
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #41
#41.Output stream 1 -> Temporal filter "Frequency 4" => #42
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
New input[0]=#41.Output stream 2, New input[1]=#41.Output stream 3, New input[2]=#0.Output stream 2 -> StimuliSwitch => #43
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] StimuliSwitch.lua
  Targets = 1
  Non Targets = 2 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#42, Input stimulations=#43.Stimulations -> Stimulation based epoching "SBE (0.0-0.3)" => #44
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#42, Input stimulations=#43.New output[1] -> Stimulation based epoching "SBE (0.1-0.3)" => #45
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#44.Epoched signal, Input stream 2=#45.Epoched signal -> Streamed matrix multiplexer => #46
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_Target4"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-Target4.csv
  Column separator = ;
  Precision = 10
Input signal=#42, Input stimulations=#43.New output[2] -> Stimulation based epoching "SBE (0.0-0.3)" => #48
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#42, Input stimulations=#43.New output[3] -> Stimulation based epoching "SBE (0.1-0.3)" => #49
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#48.Epoched signal, Input stream 2=#49.Epoched signal -> Streamed matrix multiplexer => #50
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTarget4"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTarget4.csv
  Column separator = ;
  Precision = 10
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #52
#52.Output stream 1 -> Temporal filter "Frequency A" => #53
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-A.cfg
New input[0]=#52.Output stream 2, New input[1]=#52.Output stream 3, New input[2]=#0.Output stream 2 -> StimuliSwitch => #54
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] StimuliSwitch.lua
  Targets = 1
  Non Targets = 2 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#53, Input stimulations=#54.Stimulations -> Stimulation based epoching "SBE (0.0-0.3)" => #55
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#53, Input stimulations=#54.New output[1] -> Stimulation based epoching "SBE (0.1-0.3)" => #56
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#55.Epoched signal, Input stream 2=#56.Epoched signal -> Streamed matrix multiplexer => #57
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_TargetA"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-TargetA.csv
  Column separator = ;
  Precision = 10
Input signal=#53, Input stimulations=#54.New output[2] -> Stimulation based epoching "SBE (0.0-0.3)" => #59
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#53, Input stimulations=#54.New output[3] -> Stimulation based epoching "SBE (0.1-0.3)" => #60
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#59.Epoched signal, Input stream 2=#60.Epoched signal -> Streamed matrix multiplexer => #61
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTargetA"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTargetA.csv
  Column separator = ;
  Precision = 10
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #63
New input[0]=#63.Output stream 2, New input[1]=#63.Output stream 3, New input[2]=#0.Output stream 2 -> StimuliSwitch => #64
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] StimuliSwitch.lua
  Targets = 1
  Non Targets = 2 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
#63.Output stream 1 -> Temporal filter "Frequency B" => #65
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-B.cfg
Input signal=#65, Input stimulations=#64.Stimulations -> Stimulation based epoching "SBE (0.0-0.3)" => #66
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#65, Input stimulations=#64.New output[1] -> Stimulation based epoching "SBE (0.1-0.3)" => #67
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#66.Epoched signal, Input stream 2=#67.Epoched signal -> Streamed matrix multiplexer => #68
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_TargetB"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-TargetB.csv
  Column separator = ;
  Precision = 10
Input signal=#65, Input stimulations=#64.New output[2] -> Stimulation based epoching "SBE (0.0-0.3)" => #70
  Epoch duration (in sec) = 0.3
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.3_Offset-0.0.cfg
Input signal=#65, Input stimulations=#64.New output[3] -> Stimulation based epoching "SBE (0.1-0.3)" => #71
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-0.2_Offset-0.1.cfg
Input stream 1=#70.Epoched signal, Input stream 2=#71.Epoched signal -> Streamed matrix multiplexer => #72
-> 0xc73e83ec CSV File Writer "SBE_SSVEP_NonTargetB"
  Filename = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[$core{date}-$core{time}]-SBE-SSVEP-NonTargetB.csv
  Column separator = ;
  Precision = 10
Input signal=#0.Output stream 1, Input stimulations=#0.Output stream 5 -> Stimulation based epoching => #74
  Epoch duration (in sec) = 15.0
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-15.0_Offset-0.0.cfg
#74.Epoched signal -> (During Trial) Trial CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[3] TrialRawSignal(16ch_15sec)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Timeout 5min => #76
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#76, Signal condition 1=#13, Signal condition 2=#17 -> CSP Spatial Filter Trainer 1 => #77
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-1.cfg
  Filter dimension = 2
  Save as box config = true
Stimulations=#76, Signal condition 1=#24, Signal condition 2=#28 -> CSP Spatial Filter Trainer 2 => #78
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-2.cfg
  Filter dimension = 2
  Save as box config = true
Stimulations=#76, Signal condition 1=#35, Signal condition 2=#39 -> CSP Spatial Filter Trainer 3 => #79
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-3.cfg
  Filter dimension = 2
  Save as box config = true
Stimulations=#76, Signal condition 1=#46, Signal condition 2=#50 -> CSP Spatial Filter Trainer 4 => #80
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-4.cfg
  Filter dimension = 2
  Save as box config = true
Stimulations=#76, Signal condition 1=#68, Signal condition 2=#72 -> CSP Spatial Filter Trainer B => #81
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-B.cfg
  Filter dimension = 2
  Save as box config = true
Stimulations=#76, Signal condition 1=#57, Signal condition 2=#61 -> CSP Spatial Filter Trainer A => #82
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-A.cfg
  Filter dimension = 2
  Save as box config = true
New input[0]=#77, New input[1]=#78, New input[2]=#79, New input[3]=#80, New input[4]=#82, New input[5]=#81 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop

Generic stream writer "Ch1-16(All)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[3] Input2CSP(Training)[$core{date}-$core{time}].ov
  Use compression = false
