OpenViBE-Scenario
Comment
  PersonalData (ov+cfg)/[2] AcquiredSignal(ALL).cfg
Comment
  Should be 2 features * 37 data
  CSP filtered (8 chs) => 2 features
  Output each 0.3 sec and began from 4.2 sec to 15.0 sec (37 plots * 1)
Comment
  Should be 2 features * 111 data
  CSP filtered (8 chs) => 2 features
  Output each 0.3 sec and began from 4.2 sec to 15.0 sec (37 plots * 3)

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(Training-Hybrid)[2016.02.03-09.28.38].ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(Training).cfg
#0.Output stream 3 -> Stimulation Filter (P300-TARGET) => #1
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> Stimulation listener (P300-TARGET)
  Log level to use = Information
#0.Output stream 5 -> Stimulation Filter (P300Trial Start&Stop) => #3
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
#0.Output stream 1 -> Channel Selector "9;10;11;12;13;14;15;16" => #5
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
Data=#5, Stimulations=#0.Output stream 3 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#5, Input stream 2=#1, Input stream 3=#3 -> Identity => #7
#7.Output stream 1 -> Spatial Filter (CSP1) => #8
  Spatial Filter Coefficients = -1.462972e-001 -7.246848e-001 2.259448e-001 3.696417e-002 3.290125e-002 -8.457478e-004 -1.097567e-001 6.228017e-001 -2.147245e-001 -2.178566e-001 5.957404e-002 -8.181576e-002 2.885516e-001 -4.264748e-001 -1.155258e-001 7.859389e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-1.cfg
-> 0xc73e83ec CSV File Writer "CSP_Filtered_Signal1"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-CSP-FilteredSignal-1.csv
  Column separator = ,
  Precision = 10
Input stream 1=#8, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #10
#10.Output stream 1 -> Temporal filter "Frequency 1" => #11
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 7.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
-> 0xc73e83ec CSV File Writer "CSP_Temporal_Filtered_Signal1"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-CSP_Temporal_Filtered_Signal-1.csv
  Column separator = ,
  Precision = 10
New input[0]=#10.Output stream 2, New input[1]=#10.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #13
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 1
  Non Targets = 2 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#11, Input stimulations=#13.Stimulations -> Stimulation based epoching "SBE" => #14
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#14.Epoched signal -> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-SBETarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#14.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #20
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_Target1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#11, Input stimulations=#13.New output -> Stimulation based epoching "SBE" => #22
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#22.Epoched signal -> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-SBENonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#22.Epoched signal -> Time based epoching "TBE" => #24
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-TBENonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#24 -> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #28
  Equation = log(1+x)
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-DSPNonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#28 -> Feature aggregator => #30
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_NonTarget1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#7.Output stream 1 -> Spatial Filter (CSP2) => #32
  Spatial Filter Coefficients = -1.400111e-001 -1.192449e-001 3.476082e-001 5.865646e-002 -7.496528e-001 -1.611613e-001 4.727179e-001 1.746170e-001 -1.201520e-001 -2.113312e-001 3.369834e-001 -1.482437e-001 -4.599632e-001 3.903929e-001 5.735882e-001 -3.352497e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-2.cfg
-> 0xc73e83ec CSV File Writer "CSP_Filtered_Signal2"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-CSP-FilteredSignal-2.csv
  Column separator = ,
  Precision = 10
Input stream 1=#32, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #34
#34.Output stream 1 -> Temporal filter "Frequency 2" => #35
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 15.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
New input[0]=#34.Output stream 2, New input[1]=#34.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #36
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 2
  Non Targets = 1 3 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#35, Input stimulations=#36.Stimulations -> Stimulation based epoching "SBE" => #37
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#37.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #42
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_Target2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#35, Input stimulations=#36.New output -> Stimulation based epoching "SBE" => #44
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#44.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #49
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_NonTarget2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#7.Output stream 1 -> Spatial Filter (CSP4) => #51
  Spatial Filter Coefficients = 1.435320e-001 -2.138980e-002 -2.232115e-001 4.152887e-002 -6.289001e-001 1.167232e-003 7.155191e-001 1.410982e-001 2.633258e-001 1.930058e-002 -7.882889e-001 -3.327035e-001 2.885877e-001 2.609136e-001 2.114309e-001 4.619747e-002
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-4.cfg
Input stream 1=#51, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #52
New input[0]=#52.Output stream 2, New input[1]=#52.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #53
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 4
  Non Targets = 1 2 3
  Trigger Stimulation = OVTK_StimulationId_TrialStart
#52.Output stream 1 -> Temporal filter "Frequency 4" => #54
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 20.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
Input signal=#54, Input stimulations=#53.Stimulations -> Stimulation based epoching "SBE" => #55
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#55.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #60
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_Target4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#54, Input stimulations=#53.New output -> Stimulation based epoching "SBE" => #62
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#62.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #67
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_NonTarget4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#51 -> 0xc73e83ec CSV File Writer "CSP_Filtered_Signal4"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-CSP-FilteredSignal-4.csv
  Column separator = ,
  Precision = 10
#7.Output stream 1 -> Spatial Filter (CSPA) => #70
  Spatial Filter Coefficients = 1.435320e-001 -2.138980e-002 -2.232115e-001 4.152887e-002 -6.289001e-001 1.167232e-003 7.155191e-001 1.410982e-001 2.633258e-001 1.930058e-002 -7.882889e-001 -3.327035e-001 2.885877e-001 2.609136e-001 2.114309e-001 4.619747e-002
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-4.cfg
Input stream 1=#70, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #71
#71.Output stream 1 -> Temporal filter "Frequency A" => #72
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 13.4999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-A.cfg
New input[0]=#71.Output stream 2, New input[1]=#71.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #73
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 1 3
  Non Targets = 2 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
Input signal=#72, Input stimulations=#73.Stimulations -> Stimulation based epoching "SBE" => #74
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#74.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #79
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_TargetA[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#72, Input stimulations=#73.New output -> Stimulation based epoching "SBE" => #81
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#81.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #86
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_NonTargetA[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#7.Output stream 1 -> Spatial Filter (CSPB) => #88
  Spatial Filter Coefficients = 1.435320e-001 -2.138980e-002 -2.232115e-001 4.152887e-002 -6.289001e-001 1.167232e-003 7.155191e-001 1.410982e-001 2.633258e-001 1.930058e-002 -7.882889e-001 -3.327035e-001 2.885877e-001 2.609136e-001 2.114309e-001 4.619747e-002
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-4.cfg
Input stream 1=#88, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #89
New input[0]=#89.Output stream 2, New input[1]=#89.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #90
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 2 4
  Non Targets = 1 3
  Trigger Stimulation = OVTK_StimulationId_TrialStart
#89.Output stream 1 -> Temporal filter "Frequency B" => #91
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13.5000
  High cut frequency (Hz) = 20.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-B.cfg
Input signal=#91, Input stimulations=#90.Stimulations -> Stimulation based epoching "SBE" => #92
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#92.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #97
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_TargetB[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#91, Input stimulations=#90.New output -> Stimulation based epoching "SBE" => #99
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#99.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #104
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_NonTargetB[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#7.Output stream 1 -> Spatial Filter (CSP3) => #106
  Spatial Filter Coefficients = 5.522216e-001 -5.811046e-001 -4.023349e-001 2.337991e-002 -1.324832e-001 3.654531e-001 -1.071097e-001 1.799128e-001 5.412140e-001 3.982339e-001 -4.161684e-001 -4.465311e-001 1.192174e-001 2.838478e-001 -6.486476e-002 -2.773468e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-3.cfg
Input stream 1=#106, Input stream 2=#7.Output stream 2, Input stream 3=#7.Output stream 3 -> Identity => #107
New input[0]=#107.Output stream 2, New input[1]=#107.Output stream 3 -> _isIntendedTarget? (Trigger: P300 TrialStart) => #108
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] Target-Nontarget-Separator_forSSVEP.lua
  Targets = 3
  Non Targets = 1 2 4
  Trigger Stimulation = OVTK_StimulationId_TrialStart
#107.Output stream 1 -> Temporal filter "Frequency 3" => #109
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
Input signal=#109, Input stimulations=#108.Stimulations -> Stimulation based epoching "SBE" => #110
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#110.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #115
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_Target3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#109, Input stimulations=#108.New output -> Stimulation based epoching "SBE" => #117
  Epoch duration (in sec) = 12.0
  Epoch offset (in sec) = 3.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] SBE_Duration-12.0_Offset-3.0.cfg
#117.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #122
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[4] SSVEP-classifierInput_NonTarget3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#106 -> 0xc73e83ec CSV File Writer "CSP_Filtered_Signal3"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-CSP-FilteredSignal-3.csv
  Column separator = ,
  Precision = 10
Timeout 5min => #125
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#125, Features for class 1=#60, Features for class 2=#67 -> Classifier trainer 4 => #126
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-4.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 10
Stimulations=#125, Features for class 1=#79, Features for class 2=#86 -> Classifier trainer A => #127
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-SSVEPclassifier-A.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 20
Stimulations=#125, Features for class 1=#20, Features for class 2=#30 -> Classifier trainer 1 => #128
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 10
Stimulations=#125, Features for class 1=#42, Features for class 2=#49 -> Classifier trainer 2 => #129
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 10
Stimulations=#125, Features for class 1=#115, Features for class 2=#122 -> Classifier trainer 3 => #130
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 10
Stimulations=#125, Features for class 1=#97, Features for class 2=#104 -> Classifier trainer B => #131
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-SSVEPclassifier-B.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 20
New input[0]=#128, New input[1]=#129, New input[2]=#130, New input[3]=#126, New input[4]=#127, New input[5]=#131 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop

FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/[3] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
