OpenViBE-Scenario
Comment
  [2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg
Comment
  Signal 1/4
   256 plot / 1 sec => 64 plot / 1 sec
Comment
  Extract Stimulus Onset
   51 plot / 0.8 sec ... 10 times for each TARGET (51 plots * 10 times * 4 stimulus = 2040) / 40 times for each NonTARGET (51 * 40 * 4 = 8160)
Comment
  Read file from "[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg"
  Epoch average ... summarize each stimulus from onset (0.0 ~ 0.8 / 510 plots => 51 plots)
Comment
  Convert them to Feauture Matrix
  51 plots (1 stimulus) * 8 electrode chs = 408 feature

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2016.01.08-15.36.05]AcquiredSignal(ALL).ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg
#0.Output stream 1 -> Channel Selector "Cz;Pz;P3;P4;C3;C4;CP5;CP6"
  Channel List = Cz;Pz;P3;P4;C3;C4;CP5;CP6
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "LowPASS 10Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 10.0
  Pass band ripple (dB) = 0.500000
-> 0xc67a01dc Signal Decimation 1/4 => #3
  Decimation factor = 4
Data=#3, Stimulations=#0.Output stream 4 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input signal=#3, Input stimulations=#0.Output stream 4 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#5.Epoched signal -> CSV File Writer "SBETarget"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-1cls-SBE-Target.csv
  Column separator = ;
  Precision = 10
#5.Epoched signal -> Epoch average => #7
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-EpochAveragedTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#7 -> Feature aggregator => #9
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-FeatureTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#3, Input stimulations=#0.Output stream 4 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#11.Epoched signal -> CSV File Writer "SBENonTarget"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-1cls-SBE-NonTarget.csv
  Column separator = ;
  Precision = 10
#11.Epoched signal -> Epoch average => #13
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-EpochAveragedNonTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#13 -> Feature aggregator => #15
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-FeatureNonTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 5 -> Stimulation Filter (Trial Start&Stop)
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> Stimulation listener (Trial Start&Stop)
  Log level to use = Information
Timeout => #19
  Timeout delay = 120
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#19, Features for class 1=#9, Features for class 2=#15 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/1cls-p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 4
