OpenViBE-Scenario
Comment
  PersonalData (ov+cfg)/[2] AcquiredSignal(ALL).cfg
Comment
  To Create Graph
Comment
  Should be 3 features * 1020 (10 stimulus * 2 class * 51 plots) data
Comment
  For MATLAB

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(Training-Hybrid)[2016.02.03-09.28.38].ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(Training).cfg
#0.Output stream 2 -> Stimulation listener "Genetic Chunk1(STI)"
  Log level to use = Information
#0.Output stream 3 -> Stimulation listener "Genetic Chunk2(TAR)"
  Log level to use = Information
#0.Output stream 4 -> Stimulation listener "Genetic Chunk3(COR)"
  Log level to use = Information
#0.Output stream 2 -> Stimulation Filter "Stimulus 1" => #4
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
#0.Output stream 2 -> Stimulation Filter "Stimulus 2" => #5
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
#0.Output stream 3 -> Stimulation Filter "Stimulus 1-4+5" => #6
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
New input[0]=#4, New input[1]=#6 -> Target-NonTarget-Separator => #7
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
#7.Stimulations -> Stimulation listener "Separator Chunk1"
  Log level to use = Information
#7.New output -> Stimulation listener "Separator Chunk2"
  Log level to use = Information
New input[0]=#5, New input[1]=#6 -> Target-NonTarget-Separator => #10
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input stimulations 1=#7.Stimulations, Input stimulations 2=#10.Stimulations -> Stimulation multiplexer => #11
Input stimulations 1=#7.New output, Input stimulations 2=#10.New output -> Stimulation multiplexer => #12
#0.Output stream 2 -> Stimulation Filter "Stimulus 3" => #13
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#13, New input[1]=#6 -> Target-NonTarget-Separator => #14
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
#0.Output stream 2 -> Stimulation Filter "Stimulus 4" => #15
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#15, New input[1]=#6 -> Target-NonTarget-Separator => #16
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input stimulations 1=#14.Stimulations, Input stimulations 2=#16.Stimulations -> Stimulation multiplexer => #17
Input stimulations 1=#14.New output, Input stimulations 2=#16.New output -> Stimulation multiplexer => #18
#0.Output stream 1 -> Channel Selector "1;2;3;4;5;6;7;8" => #19
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "LowPASS 9Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
#19 -> Identity => #21
Input signal=#21, Input stimulations=#11 -> Stimulation based epoching "SBE 0.0-0.4 (Graph)" => #22
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.0.cfg
#22.Epoched signal -> CSV File Writer "SBE_TargetA"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_TargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#12 -> Stimulation based epoching "SBE 0.0-0.4 (Graph)" => #24
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.0.cfg
#24.Epoched signal -> CSV File Writer "SBE_NonTargetA"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#17 -> Stimulation based epoching "SBE 0.0-0.4 (Graph)" => #26
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.0.cfg
#26.Epoched signal -> CSV File Writer "SBE_TargetB"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_TargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#18 -> Stimulation based epoching "SBE 0.0-0.4 (Graph)" => #28
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.0.cfg
#28.Epoched signal -> CSV File Writer "SBE_NonTargetB"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#7.Stimulations -> Stimulation based epoching "SBE 0.1-0.3 (Data)" => #30
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#30.Epoched signal -> CSV File Writer "SBE_Target1"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_Target1_F[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#7.New output -> Stimulation based epoching "SBE 0.1-0.3 (Data)" => #32
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#32.Epoched signal -> CSV File Writer "SBE_NonTarget1"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTarget1_F[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#10.Stimulations -> Stimulation based epoching "SBE 0.1-0.3 (Data)" => #34
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#34.Epoched signal -> CSV File Writer "SBE_Target2"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_Target2_F[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#10.New output -> Stimulation based epoching "SBE 0.1-0.3 (Data)" => #36
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#36.Epoched signal -> CSV File Writer "SBE_NonTarget2"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTarget2_F[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#14.Stimulations -> Stimulation based epoching "SBE 0.1-0.3 (Data)" => #38
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#38.Epoched signal -> CSV File Writer "SBE_Target3"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_Target3_F[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#14.New output -> Stimulation based epoching "SBE 0.1-0.3 (Data)" => #40
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#40.Epoched signal -> CSV File Writer "SBE_NonTarget3"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTarget3_F[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#16.Stimulations -> Stimulation based epoching "SBE 0.1-0.3 (Data)" => #42
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#42.Epoched signal -> CSV File Writer "SBE_Target4"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_Target4_F[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#16.New output -> Stimulation based epoching "SBE 0.1-0.3 (Data)" => #44
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#44.Epoched signal -> CSV File Writer "SBE_NonTarget4"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTarget4_F[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#7.Stimulations -> 0xc67a01dc Stimulation based epoching "SBE 0.4-0.6 (Data)" => #46
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.4.cfg
#46.Epoched signal -> CSV File Writer "SBE_Target1"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_Target1_R[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#7.New output -> Stimulation based epoching "SBE 0.4-0.6 (Data)" => #48
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.4.cfg
#48.Epoched signal -> CSV File Writer "SBE_NonTarget1"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTarget1_R[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#10.Stimulations -> Stimulation based epoching "SBE 0.4-0.6 (Data)" => #50
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.4.cfg
#50.Epoched signal -> CSV File Writer "SBE_Target2"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_Target2_R[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#10.New output -> Stimulation based epoching "SBE 0.4-0.6 (Data)" => #52
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.4.cfg
#52.Epoched signal -> CSV File Writer "SBE_NonTarget2"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTarget2_R[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#14.Stimulations -> Stimulation based epoching "SBE 0.4-0.6 (Data)" => #54
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.4.cfg
#54.Epoched signal -> CSV File Writer "SBE_Target3"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_Target3_R[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#14.New output -> Stimulation based epoching "SBE 0.4-0.6 (Data)" => #56
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.4.cfg
#56.Epoched signal -> CSV File Writer "SBE_NonTarget3"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTarget3_R[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#16.Stimulations -> Stimulation based epoching "SBE 0.4-0.6 (Data)" => #58
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.4.cfg
#58.Epoched signal -> CSV File Writer "SBE_Target4"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_Target4_R[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#16.New output -> Stimulation based epoching "SBE 0.4-0.6 (Data)" => #60
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.4.cfg
#60.Epoched signal -> CSV File Writer "SBE_NonTarget4"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE_NonTarget4_R[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 1 -> Channel Selector "1;5;6" => #62
  Channel List = 1;5;6
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "LowPASS 9Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
Input signal=#62, Input stimulations=#11 -> Stimulation based epoching "SBE" => #64
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#64.Epoched signal -> Feature aggregator => #65
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-classifierInput_TargetA[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#64.Epoched signal -> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-trainSignal_TargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#62, Input stimulations=#17 -> Stimulation based epoching "SBE" => #68
  Epoch duration (in sec) = 0.2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.2_Offset-0.1.cfg
#68.Epoched signal -> Feature aggregator => #69
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-classifierInput_TargetB[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#68.Epoched signal -> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-trainSignal_TargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Timeout 5min => #72
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#72, Features for class 1=#65, Features for class 2=#69 -> Classifier trainer "ClassAorB"
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifier-AB.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 20
-> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
