OpenViBE-Scenario
Comment
  [2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg
Comment
  Target and NonTarget Stimulus in duration
  256 * 0.4 = 102 plots
  TARGET = 40 times * 102 plots = 4080 plots
  NonTARGET = 160 times * 102 plots = 16320 plots
Comment
  Should be 25 plots
  64 Hz * 0.4 sec = 25.6 -> 25 plots
  25 plots * 10 (Target stimulus of 1 trial) = 250 plots
  Epoc(10) = 250 / 10 = 25
Comment
  Should be 75 (25 * 3) plots
  25 plots * 30 (Non Target stimulus of 1 trial) = 750 plots
  Epoc(10) = 750 / 10 = 75
Comment
  Should be 200 features * 2 data
  25 plots * 8 chs = 200 features
  Data 1: Averaged Epoc by Target 1
  Data 2: Averaged Epoc by Target 2
Comment
  Should be 200 features * 6 data
  25 plots * 8 chs = 200 features
  Data 1-3: Averaged Epoc by NonTarget 1
  Data 4-6: Averaged Epoc by NonTarget 2

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2016.01.21-16.24.01]AcquiredSignal(ALL).ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg
#0.Output stream 1 -> Channel Selector "1;2;3;4;5;6;7;8" => #1
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "LowPASS 9Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #3
  Decimation factor = 4
Data=#1, Stimulations=#0.Output stream 5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Output stream 5 -> Stimulation Filter (Trial Start&Stop)
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> Stimulation listener (Trial Start&Stop)
  Log level to use = Information
#0.Output stream 3 -> Stimulation Filter "Stimulus 1-4+5" => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
Input stream 1=#3, Input stream 2=#7 -> Identity "Targets" => #8
#8.Output stream 2 -> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-TargetOrder[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#8.Output stream 1 -> Identity "Signal" => #10
#8.Output stream 1 -> Identity "Signal" => #11
#8.Output stream 1 -> Identity "Signal" => #12
#8.Output stream 1 -> Identity "Signal" => #13
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #14
#14.Output stream 1 -> Identity => #15
New input[0]=#14.Output stream 2, New input[1]=#14.Output stream 3 -> Target-NonTarget-Separator => #16
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#15, Input stimulations=#16.Stimulations -> Stimulation based epoching => #17
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#17.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-AllTarget.csv
  Column separator = ;
  Precision = 10
Input signal=#15, Input stimulations=#16.New output -> Stimulation based epoching => #19
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#19.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-AllNonTarget.csv
  Column separator = ;
  Precision = 10
#0.Output stream 2 -> Stimulation Filter "Stimulus 2" => #21
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
New input[0]=#21, New input[1]=#8.Output stream 2 -> Target-NonTarget-Separator => #22
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#11, Input stimulations=#22.Stimulations -> Stimulation based epoching "SBE" => #23
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#23.Epoched signal -> 0xc73e83ec CSV File Writer "SBETarget2"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-Target2.csv
  Column separator = ;
  Precision = 10
#23.Epoched signal -> Epoch average => #25
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input signal=#11, Input stimulations=#22.New output -> Stimulation based epoching "SBE" => #26
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#26.Epoched signal -> 0xc73e83ec CSV File Writer "SBENonTarget2"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-NonTarget2.csv
  Column separator = ;
  Precision = 10
#26.Epoched signal -> Epoch average => #28
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
#0.Output stream 2 -> Stimulation Filter "Stimulus 3" => #29
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#29, New input[1]=#8.Output stream 2 -> Target-NonTarget-Separator => #30
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#12, Input stimulations=#30.Stimulations -> Stimulation based epoching "SBE" => #31
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#31.Epoched signal -> 0xc73e83ec CSV File Writer "SBETarget3"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-Target3.csv
  Column separator = ;
  Precision = 10
#31.Epoched signal -> Epoch average => #33
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input signal=#12, Input stimulations=#30.New output -> Stimulation based epoching "SBE" => #34
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#34.Epoched signal -> 0xc73e83ec CSV File Writer "SBENonTarget3"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-NonTarget3.csv
  Column separator = ;
  Precision = 10
#34.Epoched signal -> Epoch average => #36
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
#0.Output stream 2 -> Stimulation Filter "Stimulus 4" => #37
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#37, New input[1]=#8.Output stream 2 -> Target-NonTarget-Separator => #38
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#13, Input stimulations=#38.Stimulations -> Stimulation based epoching "SBE" => #39
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#39.Epoched signal -> 0xc73e83ec CSV File Writer "SBETarget4"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-Target4.csv
  Column separator = ;
  Precision = 10
#39.Epoched signal -> Epoch average => #41
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input stream 1=#33, Input stream 2=#41 -> Streamed matrix multiplexer
-> Feature aggregator => #43
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-2cls-FeatureTargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#13, Input stimulations=#38.New output -> Stimulation based epoching "SBE" => #45
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#45.Epoched signal -> 0xc73e83ec CSV File Writer "SBENonTarget4"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-NonTarget4.csv
  Column separator = ;
  Precision = 10
#45.Epoched signal -> Epoch average => #47
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input stream 1=#36, Input stream 2=#47 -> Streamed matrix multiplexer
-> Feature aggregator => #49
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-2cls-FeatureNonTargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 2 -> Stimulation Filter "Stimulus 1" => #51
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
New input[0]=#51, New input[1]=#8.Output stream 2 -> Target-NonTarget-Separator => #52
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#10, Input stimulations=#52.Stimulations -> Stimulation based epoching "SBE" => #53
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#53.Epoched signal -> 0xc73e83ec CSV File Writer "SBETarget1"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-Target1.csv
  Column separator = ;
  Precision = 10
#53.Epoched signal -> Epoch average => #55
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input stream 1=#55, Input stream 2=#25 -> Streamed matrix multiplexer
-> Feature aggregator => #57
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-2cls-FeatureTargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#55 -> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-EpochAverageTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#10, Input stimulations=#52.New output -> Stimulation based epoching "SBE" => #60
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#60.Epoched signal -> 0xc73e83ec CSV File Writer "SBENonTarget1"
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/[$core{date}-$core{time}]-P300-SBE-NonTarget1.csv
  Column separator = ;
  Precision = 10
#60.Epoched signal -> Epoch average => #62
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
Input stream 1=#62, Input stream 2=#28 -> Streamed matrix multiplexer
-> Feature aggregator => #64
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-2cls-FeatureNonTargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#62 -> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2-3-4-5-Hybrid] AcquiredSignalFiles(.csv)/record-EpochAverageNonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Timeout 150sec => #67
  Timeout delay = 150
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#67, Features for class 1=#57, Features for class 2=#64 -> Classifier trainer A => #68
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierA.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 4
Stimulations=#67, Features for class 1=#43, Features for class 2=#49 -> Classifier trainer B => #69
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierB.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 4
New input[0]=#68, New input[1]=#69 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
