OpenViBE-Scenario
Comment
  PersonalData (ov+cfg)/[2] AcquiredSignal(ALL).cfg
Comment
  Target and NonTarget Stimulus in duration
  256 * 0.7 = 179 plots
  TARGET = 40 times * 179 plots = 7160 plots
  NonTARGET = 160 times * 179 plots = 28640 plots
Comment
  Should be 44 plots * 5 data
  44 plots * 5 datas = 220 plots
Comment
  Should be 352 features * 5 data
  44 plots * 8 chs = 352 features
Comment
  Should be 352 features * 5 data
  44 plots * 8 chs = 352 features

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(Training-Hybrid)[2016.02.05-14.29.11].ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(Training).cfg
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #1
New input[0]=#1.Output stream 2, New input[1]=#1.Output stream 3 -> Target-NonTarget-Separator => #2
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
#1.Output stream 1 -> Identity => #3
Input signal=#3, Input stimulations=#2.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#4.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE-AllTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#3, Input stimulations=#2.New output -> Stimulation based epoching => #6
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#6.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-SBE-AllNonTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 1 -> Channel Selector "1;2;3;4;5;6;7;8" => #8
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Data=#8, Stimulations=#0.Output stream 5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#8 -> Identity "Signal" => #10
Input signal=#10, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE Label1-1" => #11
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.1_Offset-0.1.cfg
#11.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 0.004
  Epoch 1 intervals (in sec) = 0.004
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 25
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-trainSignal_BlockTarget_f1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#10, Input stimulations=#2.New output -> Stimulation based epoching "SBE Label1-1" => #15
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.1_Offset-0.1.cfg
#15.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 0.004
  Epoch 1 intervals (in sec) = 0.004
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 25
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-trainSignal_BlockNonTarget_f1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#10, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE Label1-1" => #19
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0.2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.1_Offset-0.2.cfg
#19.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 0.004
  Epoch 1 intervals (in sec) = 0.004
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 25
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-trainSignal_BlockTarget_f2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#10, Input stimulations=#2.New output -> Stimulation based epoching "SBE Label1-1" => #23
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0.2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.1_Offset-0.2.cfg
#23.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 0.004
  Epoch 1 intervals (in sec) = 0.004
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 25
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-trainSignal_BlockNonTarget_f2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#10, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE Label1-1" => #27
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0.4
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.1_Offset-0.4.cfg
#27.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 0.004
  Epoch 1 intervals (in sec) = 0.004
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 25
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-trainSignal_BlockTarget_f3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#10, Input stimulations=#2.New output -> Stimulation based epoching "SBE Label1-1" => #31
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0.4
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.1_Offset-0.4.cfg
#31.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 0.004
  Epoch 1 intervals (in sec) = 0.004
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 25
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-trainSignal_BlockNonTarget_f3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10

0xc67a01dc Feature aggregator => #35
-> 0xc67a01dc (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-classifierInput_Target1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
0xc67a01dc Feature aggregator => #37
Features for class 1=#35, Features for class 2=#37 -> 0xc67a01dc Classifier trainer 1
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 5
#37 -> 0xc67a01dc (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[5] P300-classifierInput_NonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
