OpenViBE-Scenario
Comment
  PersonalData (ov+cfg)/[2] AcquiredSignal(ALL).cfg
Comment
  Target and NonTarget Stimulus in duration
  256 * 0.7 = 179 plots
  TARGET = 40 times * 179 plots = 7160 plots
  NonTARGET = 160 times * 179 plots = 28640 plots
Comment
  Should be 352 features * 5 data
  44 plots * 8 chs = 352 features
Comment
  Should be 352 features * 15 data
  44 plots * 8 chs = 352 features
Comment
  Should be 352 features * 5 data
  44 plots * 8 chs = 352 features
Comment
  Should be 352 features * 15 data
  44 plots * 8 chs = 352 features
Comment
  Should be 352 features * 5 data
  44 plots * 8 chs = 352 features
Comment
  Should be 352 features * 15 data
  44 plots * 8 chs = 352 features
Comment
  Should be 352 features * 5 data
  44 plots * 8 chs = 352 features
Comment
  Should be 352 features * 15 data
  44 plots * 8 chs = 352 features

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2016.02.01-15.05.50]AcquiredSignal(Acqire).ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(ALL).cfg
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Identity => #2
New input[0]=#1.Output stream 2, New input[1]=#1.Output stream 3 -> Target-NonTarget-Separator => #3
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#2, Input stimulations=#3.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#4.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[$core{date}-$core{time}]-P300-SBE-AllTarget.csv
  Column separator = ;
  Precision = 10
Input signal=#2, Input stimulations=#3.New output -> Stimulation based epoching => #6
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
#6.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[$core{date}-$core{time}]-P300-SBE-AllNonTarget.csv
  Column separator = ;
  Precision = 10
#0.Output stream 1 -> Channel Selector "1;2;3;4;5;6;7;8" => #8
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Data=#8, Stimulations=#0.Output stream 5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#8 -> Temporal filter "LowPASS 9Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #11
  Decimation factor = 4
#0.Output stream 5 -> Stimulation Filter (Trial Start&Stop)
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> Stimulation listener (Trial Start&Stop)
  Log level to use = Information
#0.Output stream 3 -> Stimulation Filter "Stimulus 1-4+5" => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
Input stream 1=#11, Input stream 2=#14 -> Identity "Targets" => #15
#15.Output stream 1 -> Identity "Signal" => #16
-> Identity => #17
#16 -> Identity => #18
#15.Output stream 1 -> Identity "Signal" => #19
-> Identity => #20
#19 -> Identity => #21
#15.Output stream 1 -> Identity "Signal" => #22
-> Identity => #23
#22 -> Identity => #24
#15.Output stream 1 -> Identity "Signal" => #25
-> Identity => #26
#25 -> Identity => #27
#0.Output stream 2 -> Stimulation Filter "Stimulus 3" => #28
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#28, New input[1]=#15.Output stream 2 -> Target-NonTarget-Separator => #29
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
#29.New output -> Stimulation Counter (NonTarget) => #30
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] StimulationCounter-4cls-NonTarget(30).lua
  Send stimulation = OVTK_StimulationId_Target
Input signal=#23, Input stimulations=#30.Stimulations -> Stimulation based epoching "SBE Label1-1" => #31
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#23, Input stimulations=#30.New output[1] -> Stimulation based epoching "SBE Label1-2" => #32
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#23, Input stimulations=#30.New output[2] -> Stimulation based epoching "SBE Label1-3" => #33
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#23, Input stimulations=#30.New output[3] -> Stimulation based epoching "SBE Label1-4" => #34
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#31.Epoched signal, Input stream 2=#32.Epoched signal, Input stream 3=#33.Epoched signal, Input stream 4=#34.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #37
Input signal=#23, Input stimulations=#30.New output[4] -> Stimulation based epoching "SBE Label1-5" => #38
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#32.Epoched signal, Input stream 2=#33.Epoched signal, Input stream 3=#34.Epoched signal, Input stream 4=#38.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #41
Input signal=#23, Input stimulations=#30.New output[5] -> Stimulation based epoching "SBE Label1-1" => #42
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#33.Epoched signal, Input stream 2=#34.Epoched signal, Input stream 3=#38.Epoched signal, Input stream 4=#42.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #45
Input signal=#23, Input stimulations=#30.New output[6] -> Stimulation based epoching "SBE Label1-2" => #46
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#34.Epoched signal, Input stream 2=#38.Epoched signal, Input stream 3=#42.Epoched signal, Input stream 4=#46.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #49
Input signal=#23, Input stimulations=#30.New output[7] -> Stimulation based epoching "SBE Label1-3" => #50
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#38.Epoched signal, Input stream 2=#42.Epoched signal, Input stream 3=#46.Epoched signal, Input stream 4=#50.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #53
Input signal=#23, Input stimulations=#30.New output[8] -> Stimulation based epoching "SBE Label1-4" => #54
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#42.Epoched signal, Input stream 2=#46.Epoched signal, Input stream 3=#50.Epoched signal, Input stream 4=#54.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #57
Input signal=#23, Input stimulations=#30.New output[9] -> Stimulation based epoching "SBE Label1-5" => #58
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#46.Epoched signal, Input stream 2=#50.Epoched signal, Input stream 3=#54.Epoched signal, Input stream 4=#58.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #61
Input signal=#23, Input stimulations=#30.New output[10] -> Stimulation based epoching "SBE Label1-1" => #62
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#50.Epoched signal, Input stream 2=#54.Epoched signal, Input stream 3=#58.Epoched signal, Input stream 4=#62.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #65
Input signal=#23, Input stimulations=#30.New output[11] -> Stimulation based epoching "SBE Label1-2" => #66
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#54.Epoched signal, Input stream 2=#58.Epoched signal, Input stream 3=#62.Epoched signal, Input stream 4=#66.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #69
Input signal=#23, Input stimulations=#30.New output[12] -> Stimulation based epoching "SBE Label1-3" => #70
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#58.Epoched signal, Input stream 2=#62.Epoched signal, Input stream 3=#66.Epoched signal, Input stream 4=#70.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #73
Input signal=#23, Input stimulations=#30.New output[13] -> Stimulation based epoching "SBE Label1-4" => #74
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#62.Epoched signal, Input stream 2=#66.Epoched signal, Input stream 3=#70.Epoched signal, Input stream 4=#74.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #77
Input signal=#23, Input stimulations=#30.New output[14] -> Stimulation based epoching "SBE Label1-5" => #78
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#66.Epoched signal, Input stream 2=#70.Epoched signal, Input stream 3=#74.Epoched signal, Input stream 4=#78.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #81
Input stream 1=#70.Epoched signal, Input stream 2=#74.Epoched signal, Input stream 3=#78.Epoched signal, Input stream 4=#31.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #84
Input stream 1=#74.Epoched signal, Input stream 2=#78.Epoched signal, Input stream 3=#31.Epoched signal, Input stream 4=#32.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #87
Input stream 1=#78.Epoched signal, Input stream 2=#31.Epoched signal, Input stream 3=#32.Epoched signal, Input stream 4=#33.Epoched signal -> Streamed matrix multiplexer
-> 0xc67a01dc Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #90
Input stream 1=#37, Input stream 2=#41, Input stream 3=#45, Input stream 4=#49, Input stream 5=#53, Input stream 6=#57, Input stream 7=#61, Input stream 8=#65, Input stream 9=#69, Input stream 10=#73, Input stream 11=#77, Input stream 12=#81, Input stream 13=#84, Input stream 14=#87, Input stream 15=#90 -> Streamed matrix multiplexer => #91
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_NonTarget3[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#29.Stimulations -> Stimulation Counter (Target) => #93
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] StimulationCounter-4cls-Target(10).lua
  Send stimulation = OVTK_StimulationId_Target
Input signal=#24, Input stimulations=#93.Stimulations -> Stimulation based epoching "SBE Label1-1" => #94
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#24, Input stimulations=#93.New output[1] -> Stimulation based epoching "SBE Label1-2" => #95
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#24, Input stimulations=#93.New output[2] -> Stimulation based epoching "SBE Label1-3" => #96
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#24, Input stimulations=#93.New output[3] -> Stimulation based epoching "SBE Label1-4" => #97
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#94.Epoched signal, Input stream 2=#95.Epoched signal, Input stream 3=#96.Epoched signal, Input stream 4=#97.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #100
Input signal=#24, Input stimulations=#93.New output[4] -> Stimulation based epoching "SBE Label1-5" => #101
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#95.Epoched signal, Input stream 2=#96.Epoched signal, Input stream 3=#97.Epoched signal, Input stream 4=#101.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #104
Input stream 1=#94.Epoched signal, Input stream 2=#96.Epoched signal, Input stream 3=#97.Epoched signal, Input stream 4=#101.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #107
Input stream 1=#94.Epoched signal, Input stream 2=#95.Epoched signal, Input stream 3=#97.Epoched signal, Input stream 4=#101.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #110
Input stream 1=#94.Epoched signal, Input stream 2=#95.Epoched signal, Input stream 3=#96.Epoched signal, Input stream 4=#101.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #113
Input stream 1=#100, Input stream 2=#104, Input stream 3=#107, Input stream 4=#110, Input stream 5=#113 -> Streamed matrix multiplexer => #114
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_Target3[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 2 -> Stimulation Filter "Stimulus 4" => #116
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#116, New input[1]=#15.Output stream 2 -> Target-NonTarget-Separator => #117
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
#117.New output -> Stimulation Counter (NonTarget) => #118
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] StimulationCounter-4cls-NonTarget(30).lua
  Send stimulation = OVTK_StimulationId_Target
Input signal=#26, Input stimulations=#118.Stimulations -> Stimulation based epoching "SBE Label1-1" => #119
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#26, Input stimulations=#118.New output[1] -> Stimulation based epoching "SBE Label1-2" => #120
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#26, Input stimulations=#118.New output[2] -> Stimulation based epoching "SBE Label1-3" => #121
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#26, Input stimulations=#118.New output[3] -> Stimulation based epoching "SBE Label1-4" => #122
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#119.Epoched signal, Input stream 2=#120.Epoched signal, Input stream 3=#121.Epoched signal, Input stream 4=#122.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #125
Input signal=#26, Input stimulations=#118.New output[4] -> Stimulation based epoching "SBE Label1-5" => #126
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#120.Epoched signal, Input stream 2=#121.Epoched signal, Input stream 3=#122.Epoched signal, Input stream 4=#126.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #129
Input signal=#26, Input stimulations=#118.New output[5] -> Stimulation based epoching "SBE Label1-1" => #130
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#121.Epoched signal, Input stream 2=#122.Epoched signal, Input stream 3=#126.Epoched signal, Input stream 4=#130.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #133
Input signal=#26, Input stimulations=#118.New output[6] -> Stimulation based epoching "SBE Label1-2" => #134
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#122.Epoched signal, Input stream 2=#126.Epoched signal, Input stream 3=#130.Epoched signal, Input stream 4=#134.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #137
Input signal=#26, Input stimulations=#118.New output[7] -> Stimulation based epoching "SBE Label1-3" => #138
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#126.Epoched signal, Input stream 2=#130.Epoched signal, Input stream 3=#134.Epoched signal, Input stream 4=#138.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #141
Input signal=#26, Input stimulations=#118.New output[8] -> Stimulation based epoching "SBE Label1-4" => #142
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#130.Epoched signal, Input stream 2=#134.Epoched signal, Input stream 3=#138.Epoched signal, Input stream 4=#142.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #145
Input signal=#26, Input stimulations=#118.New output[9] -> Stimulation based epoching "SBE Label1-5" => #146
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#134.Epoched signal, Input stream 2=#138.Epoched signal, Input stream 3=#142.Epoched signal, Input stream 4=#146.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #149
Input signal=#26, Input stimulations=#118.New output[10] -> Stimulation based epoching "SBE Label1-1" => #150
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#138.Epoched signal, Input stream 2=#142.Epoched signal, Input stream 3=#146.Epoched signal, Input stream 4=#150.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #153
Input signal=#26, Input stimulations=#118.New output[11] -> Stimulation based epoching "SBE Label1-2" => #154
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#142.Epoched signal, Input stream 2=#146.Epoched signal, Input stream 3=#150.Epoched signal, Input stream 4=#154.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #157
Input signal=#26, Input stimulations=#118.New output[12] -> Stimulation based epoching "SBE Label1-3" => #158
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#146.Epoched signal, Input stream 2=#150.Epoched signal, Input stream 3=#154.Epoched signal, Input stream 4=#158.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #161
Input signal=#26, Input stimulations=#118.New output[13] -> Stimulation based epoching "SBE Label1-4" => #162
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#150.Epoched signal, Input stream 2=#154.Epoched signal, Input stream 3=#158.Epoched signal, Input stream 4=#162.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #165
Input signal=#26, Input stimulations=#118.New output[14] -> Stimulation based epoching "SBE Label1-5" => #166
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#154.Epoched signal, Input stream 2=#158.Epoched signal, Input stream 3=#162.Epoched signal, Input stream 4=#166.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #169
Input stream 1=#158.Epoched signal, Input stream 2=#162.Epoched signal, Input stream 3=#166.Epoched signal, Input stream 4=#119.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #172
Input stream 1=#162.Epoched signal, Input stream 2=#166.Epoched signal, Input stream 3=#119.Epoched signal, Input stream 4=#120.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #175
Input stream 1=#166.Epoched signal, Input stream 2=#119.Epoched signal, Input stream 3=#120.Epoched signal, Input stream 4=#121.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #178
Input stream 1=#125, Input stream 2=#129, Input stream 3=#133, Input stream 4=#137, Input stream 5=#141, Input stream 6=#145, Input stream 7=#149, Input stream 8=#153, Input stream 9=#157, Input stream 10=#161, Input stream 11=#165, Input stream 12=#169, Input stream 13=#172, Input stream 14=#175, Input stream 15=#178 -> Streamed matrix multiplexer => #179
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_NonTarget4[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#117.Stimulations -> Stimulation Counter (Target) => #181
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] StimulationCounter-4cls-Target(10).lua
  Send stimulation = OVTK_StimulationId_Target
Input signal=#27, Input stimulations=#181.Stimulations -> Stimulation based epoching "SBE Label1-1" => #182
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#27, Input stimulations=#181.New output[1] -> Stimulation based epoching "SBE Label1-2" => #183
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#27, Input stimulations=#181.New output[2] -> Stimulation based epoching "SBE Label1-3" => #184
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#27, Input stimulations=#181.New output[3] -> Stimulation based epoching "SBE Label1-4" => #185
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 2=#183.Epoched signal, Input stream 3=#184.Epoched signal, Input stream 4=#185.Epoched signal -> Streamed matrix multiplexer
Input signal=#27, Input stimulations=#181.New output[4] -> Stimulation based epoching "SBE Label1-5" => #187
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#183.Epoched signal, Input stream 2=#184.Epoched signal, Input stream 3=#185.Epoched signal, Input stream 4=#187.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #190
Input stream 1=#182.Epoched signal, Input stream 2=#184.Epoched signal, Input stream 3=#185.Epoched signal, Input stream 4=#187.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #193
Input stream 1=#182.Epoched signal, Input stream 2=#183.Epoched signal, Input stream 3=#185.Epoched signal, Input stream 4=#187.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #196
Input stream 1=#182.Epoched signal, Input stream 2=#183.Epoched signal, Input stream 3=#184.Epoched signal, Input stream 4=#187.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #199
#0.Output stream 2 -> Stimulation Filter "Stimulus 1" => #200
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
New input[0]=#200, New input[1]=#15.Output stream 2 -> Target-NonTarget-Separator => #201
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
#201.New output -> Stimulation Counter (NonTarget) => #202
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] StimulationCounter-4cls-NonTarget(30).lua
  Send stimulation = OVTK_StimulationId_Target
Input signal=#17, Input stimulations=#202.Stimulations -> Stimulation based epoching "SBE Label1-1" => #203
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#17, Input stimulations=#202.New output[1] -> Stimulation based epoching "SBE Label1-2" => #204
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#17, Input stimulations=#202.New output[2] -> Stimulation based epoching "SBE Label1-3" => #205
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#17, Input stimulations=#202.New output[3] -> Stimulation based epoching "SBE Label1-4" => #206
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#203.Epoched signal, Input stream 2=#204.Epoched signal, Input stream 3=#205.Epoched signal, Input stream 4=#206.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #209
Input signal=#17, Input stimulations=#202.New output[4] -> Stimulation based epoching "SBE Label1-5" => #210
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#204.Epoched signal, Input stream 2=#205.Epoched signal, Input stream 3=#206.Epoched signal, Input stream 4=#210.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #213
Input signal=#17, Input stimulations=#202.New output[5] -> Stimulation based epoching "SBE Label1-1" => #214
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#205.Epoched signal, Input stream 2=#206.Epoched signal, Input stream 3=#210.Epoched signal, Input stream 4=#214.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #217
Input signal=#17, Input stimulations=#202.New output[6] -> Stimulation based epoching "SBE Label1-2" => #218
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#206.Epoched signal, Input stream 2=#210.Epoched signal, Input stream 3=#214.Epoched signal, Input stream 4=#218.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #221
Input signal=#17, Input stimulations=#202.New output[7] -> Stimulation based epoching "SBE Label1-3" => #222
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#210.Epoched signal, Input stream 2=#214.Epoched signal, Input stream 3=#218.Epoched signal, Input stream 4=#222.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #225
Input signal=#17, Input stimulations=#202.New output[8] -> Stimulation based epoching "SBE Label1-4" => #226
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#214.Epoched signal, Input stream 2=#218.Epoched signal, Input stream 3=#222.Epoched signal, Input stream 4=#226.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #229
Input signal=#17, Input stimulations=#202.New output[9] -> Stimulation based epoching "SBE Label1-5" => #230
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#218.Epoched signal, Input stream 2=#222.Epoched signal, Input stream 3=#226.Epoched signal, Input stream 4=#230.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #233
Input signal=#17, Input stimulations=#202.New output[10] -> Stimulation based epoching "SBE Label1-1" => #234
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#222.Epoched signal, Input stream 2=#226.Epoched signal, Input stream 3=#230.Epoched signal, Input stream 4=#234.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #237
Input signal=#17, Input stimulations=#202.New output[11] -> Stimulation based epoching "SBE Label1-2" => #238
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#226.Epoched signal, Input stream 2=#230.Epoched signal, Input stream 3=#234.Epoched signal, Input stream 4=#238.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #241
Input signal=#17, Input stimulations=#202.New output[12] -> Stimulation based epoching "SBE Label1-3" => #242
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#230.Epoched signal, Input stream 2=#234.Epoched signal, Input stream 3=#238.Epoched signal, Input stream 4=#242.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #245
Input signal=#17, Input stimulations=#202.New output[13] -> Stimulation based epoching "SBE Label1-4" => #246
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#234.Epoched signal, Input stream 2=#238.Epoched signal, Input stream 3=#242.Epoched signal, Input stream 4=#246.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #249
Input signal=#17, Input stimulations=#202.New output[14] -> Stimulation based epoching "SBE Label1-5" => #250
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#238.Epoched signal, Input stream 2=#242.Epoched signal, Input stream 3=#246.Epoched signal, Input stream 4=#250.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #253
Input stream 1=#242.Epoched signal, Input stream 2=#246.Epoched signal, Input stream 3=#250.Epoched signal, Input stream 4=#203.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #256
Input stream 1=#246.Epoched signal, Input stream 2=#250.Epoched signal, Input stream 3=#203.Epoched signal, Input stream 4=#204.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #259
Input stream 1=#250.Epoched signal, Input stream 2=#203.Epoched signal, Input stream 3=#204.Epoched signal, Input stream 4=#205.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #262
Input stream 1=#209, Input stream 2=#213, Input stream 3=#217, Input stream 4=#221, Input stream 5=#225, Input stream 6=#229, Input stream 7=#233, Input stream 8=#237, Input stream 9=#241, Input stream 10=#245, Input stream 11=#249, Input stream 12=#253, Input stream 13=#256, Input stream 14=#259, Input stream 15=#262 -> Streamed matrix multiplexer => #263
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_NonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#201.Stimulations -> Stimulation Counter (Target) => #265
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] StimulationCounter-4cls-Target(10).lua
  Send stimulation = OVTK_StimulationId_Target
Input signal=#18, Input stimulations=#265.Stimulations -> Stimulation based epoching "SBE Label1-1" => #266
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#18, Input stimulations=#265.New output[1] -> Stimulation based epoching "SBE Label1-2" => #267
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#18, Input stimulations=#265.New output[2] -> Stimulation based epoching "SBE Label1-3" => #268
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#18, Input stimulations=#265.New output[3] -> Stimulation based epoching "SBE Label1-4" => #269
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#266.Epoched signal, Input stream 2=#267.Epoched signal, Input stream 3=#268.Epoched signal, Input stream 4=#269.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #272
Input signal=#18, Input stimulations=#265.New output[4] -> Stimulation based epoching "SBE Label1-5" => #273
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#267.Epoched signal, Input stream 2=#268.Epoched signal, Input stream 3=#269.Epoched signal, Input stream 4=#273.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #276
Input stream 1=#266.Epoched signal, Input stream 2=#268.Epoched signal, Input stream 3=#269.Epoched signal, Input stream 4=#273.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #279
Input stream 1=#266.Epoched signal, Input stream 2=#267.Epoched signal, Input stream 3=#269.Epoched signal, Input stream 4=#273.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #282
Input stream 1=#266.Epoched signal, Input stream 2=#267.Epoched signal, Input stream 3=#268.Epoched signal, Input stream 4=#273.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #285
Input stream 1=#272, Input stream 2=#276, Input stream 3=#279, Input stream 4=#282, Input stream 5=#285 -> Streamed matrix multiplexer => #286
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_Target1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 2 -> Stimulation Filter "Stimulus 2" => #288
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
New input[0]=#288, New input[1]=#15.Output stream 2 -> Target-NonTarget-Separator => #289
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
#289.New output -> Stimulation Counter (NonTarget) => #290
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] StimulationCounter-4cls-NonTarget(30).lua
  Send stimulation = OVTK_StimulationId_Target
Input signal=#20, Input stimulations=#290.Stimulations -> Stimulation based epoching "SBE Label1-1" => #291
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#20, Input stimulations=#290.New output[1] -> Stimulation based epoching "SBE Label1-2" => #292
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#20, Input stimulations=#290.New output[2] -> Stimulation based epoching "SBE Label1-3" => #293
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#20, Input stimulations=#290.New output[3] -> Stimulation based epoching "SBE Label1-4" => #294
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#291.Epoched signal, Input stream 2=#292.Epoched signal, Input stream 3=#293.Epoched signal, Input stream 4=#294.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #297
Input signal=#20, Input stimulations=#290.New output[4] -> Stimulation based epoching "SBE Label1-5" => #298
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#292.Epoched signal, Input stream 2=#293.Epoched signal, Input stream 3=#294.Epoched signal, Input stream 4=#298.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #301
Input signal=#20, Input stimulations=#290.New output[5] -> Stimulation based epoching "SBE Label1-1" => #302
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#293.Epoched signal, Input stream 2=#294.Epoched signal, Input stream 3=#298.Epoched signal, Input stream 4=#302.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #305
Input signal=#20, Input stimulations=#290.New output[6] -> Stimulation based epoching "SBE Label1-2" => #306
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#294.Epoched signal, Input stream 2=#298.Epoched signal, Input stream 3=#302.Epoched signal, Input stream 4=#306.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #309
Input signal=#20, Input stimulations=#290.New output[7] -> Stimulation based epoching "SBE Label1-3" => #310
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#298.Epoched signal, Input stream 2=#302.Epoched signal, Input stream 3=#306.Epoched signal, Input stream 4=#310.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #313
Input signal=#20, Input stimulations=#290.New output[8] -> Stimulation based epoching "SBE Label1-4" => #314
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#302.Epoched signal, Input stream 2=#306.Epoched signal, Input stream 3=#310.Epoched signal, Input stream 4=#314.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #317
Input signal=#20, Input stimulations=#290.New output[9] -> Stimulation based epoching "SBE Label1-5" => #318
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#306.Epoched signal, Input stream 2=#310.Epoched signal, Input stream 3=#314.Epoched signal, Input stream 4=#318.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #321
Input signal=#20, Input stimulations=#290.New output[10] -> Stimulation based epoching "SBE Label1-1" => #322
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#310.Epoched signal, Input stream 2=#314.Epoched signal, Input stream 3=#318.Epoched signal, Input stream 4=#322.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #325
Input signal=#20, Input stimulations=#290.New output[11] -> Stimulation based epoching "SBE Label1-2" => #326
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#314.Epoched signal, Input stream 2=#318.Epoched signal, Input stream 3=#322.Epoched signal, Input stream 4=#326.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #329
Input signal=#20, Input stimulations=#290.New output[12] -> Stimulation based epoching "SBE Label1-3" => #330
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#318.Epoched signal, Input stream 2=#322.Epoched signal, Input stream 3=#326.Epoched signal, Input stream 4=#330.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #333
Input signal=#20, Input stimulations=#290.New output[13] -> Stimulation based epoching "SBE Label1-4" => #334
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#322.Epoched signal, Input stream 2=#326.Epoched signal, Input stream 3=#330.Epoched signal, Input stream 4=#334.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #337
Input signal=#20, Input stimulations=#290.New output[14] -> Stimulation based epoching "SBE Label1-5" => #338
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#326.Epoched signal, Input stream 2=#330.Epoched signal, Input stream 3=#334.Epoched signal, Input stream 4=#338.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #341
Input stream 1=#330.Epoched signal, Input stream 2=#334.Epoched signal, Input stream 3=#338.Epoched signal, Input stream 4=#291.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #344
Input stream 1=#334.Epoched signal, Input stream 2=#338.Epoched signal, Input stream 3=#291.Epoched signal, Input stream 4=#292.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #347
Input stream 1=#338.Epoched signal, Input stream 2=#291.Epoched signal, Input stream 3=#292.Epoched signal, Input stream 4=#293.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #350
Input stream 1=#297, Input stream 2=#301, Input stream 3=#305, Input stream 4=#309, Input stream 5=#313, Input stream 6=#317, Input stream 7=#321, Input stream 8=#325, Input stream 9=#329, Input stream 10=#333, Input stream 11=#337, Input stream 12=#341, Input stream 13=#344, Input stream 14=#347, Input stream 15=#350 -> Streamed matrix multiplexer => #351
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_NonTarget2[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#289.Stimulations -> Stimulation Counter (Target) => #353
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] StimulationCounter-4cls-Target(10).lua
  Send stimulation = OVTK_StimulationId_Target
Input signal=#21, Input stimulations=#353.Stimulations -> Stimulation based epoching "SBE Label1-1" => #354
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#21, Input stimulations=#353.New output[1] -> Stimulation based epoching "SBE Label1-2" => #355
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#21, Input stimulations=#353.New output[2] -> Stimulation based epoching "SBE Label1-3" => #356
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input signal=#21, Input stimulations=#353.New output[3] -> Stimulation based epoching "SBE Label1-4" => #357
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 2=#355.Epoched signal, Input stream 3=#356.Epoched signal, Input stream 4=#357.Epoched signal -> Streamed matrix multiplexer
Input signal=#21, Input stimulations=#353.New output[4] -> Stimulation based epoching "SBE Label1-5" => #359
  Epoch duration (in sec) = 0.7
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.7_Offset-0.1.cfg
Input stream 1=#355.Epoched signal, Input stream 2=#356.Epoched signal, Input stream 3=#357.Epoched signal, Input stream 4=#359.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #362
Input stream 1=#354.Epoched signal, Input stream 2=#356.Epoched signal, Input stream 3=#357.Epoched signal, Input stream 4=#359.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #365
Input stream 1=#354.Epoched signal, Input stream 2=#355.Epoched signal, Input stream 3=#357.Epoched signal, Input stream 4=#359.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #368
Input stream 1=#354.Epoched signal, Input stream 2=#355.Epoched signal, Input stream 3=#356.Epoched signal, Input stream 4=#359.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
-> Feature aggregator => #371
Feature aggregator => #372
Input stream 1=#372, Input stream 2=#362, Input stream 3=#365, Input stream 4=#368, Input stream 5=#371 -> Streamed matrix multiplexer => #373
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_Target2[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Feature aggregator => #375
Input stream 1=#375, Input stream 2=#190, Input stream 3=#193, Input stream 4=#196, Input stream 5=#199 -> Streamed matrix multiplexer => #376
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[5-Hybrid] P300-classifierInput_Target4[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Timeout 5min => #378
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#378, Features for class 1=#286, Features for class 2=#263 -> Classifier trainer 1 => #379
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 5
Timeout 5min => #380
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#380, Features for class 1=#373, Features for class 2=#351 -> Classifier trainer 2 => #381
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 5
Timeout 5min => #382
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#382, Features for class 1=#114, Features for class 2=#91 -> Classifier trainer 3 => #383
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 2
Timeout 5min => #384
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#384, Features for class 1=#376, Features for class 2=#179 -> Classifier trainer 4 => #385
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier4.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 5
New input[0]=#379, New input[1]=#381, New input[2]=#383, New input[3]=#385 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop

Epoch average
  Averaging type = Epoch block average
  Epoch count = 8

Epoch average
  Averaging type = Epoch block average
  Epoch count = 8
