OpenViBE-Scenario
Comment
  [2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2016.01.08-15.36.05]AcquiredSignal(ALL).ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg
#0.Output stream 5 -> Stimulation Filter (Trial Start&Stop)
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> Stimulation listener (Trial Start&Stop)
  Log level to use = Information
#0.Output stream 1 -> Channel Selector "Cz;Pz;P3;P4;C3;C4;CP5;CP6"
  Channel List = Cz;Pz;P3;P4;C3;C4;CP5;CP6
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "LowPASS 10Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 10.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #5
  Decimation factor = 4
Input stream 1=#5 -> Identity "Targets" => #6
#6.Output stream 2 -> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-TargetOrder[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Data=#6.Output stream 1, Stimulations=#0.Output stream 5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#6.Output stream 1 -> Identity "Signal" => #9
#6.Output stream 1 -> Identity "Signal" => #10
#6.Output stream 1 -> Identity "Signal" => #11
#6.Output stream 1 -> Identity "Signal" => #12
#0.Output stream 3 -> Stimulation Filter "Stimulus 1-4+5"
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
#0.Output stream 2 -> Stimulation Filter "Stimulus 2" => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
New input[0]=#14, New input[1]=#6.Output stream 2 -> Target-NonTarget-Separator => #15
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#10, Input stimulations=#15.Stimulations -> Stimulation based epoching "SBE" => #16
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#16.Epoched signal -> CSV File Writer "SBETarget2"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-4cls-SBE-Target2.csv
  Column separator = ;
  Precision = 10
#16.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> Feature aggregator => #19
Input signal=#10, Input stimulations=#15.New output -> Stimulation based epoching "SBE" => #20
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#20.Epoched signal -> CSV File Writer "SBENonTarget2"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-4cls-SBE-NonTarget2.csv
  Column separator = ;
  Precision = 10
#20.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> Feature aggregator => #23
#0.Output stream 2 -> Stimulation Filter "Stimulus 3" => #24
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#24, New input[1]=#6.Output stream 2 -> Target-NonTarget-Separator => #25
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#11, Input stimulations=#25.Stimulations -> Stimulation based epoching "SBE" => #26
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#26.Epoched signal -> CSV File Writer "SBETarget3"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-4cls-SBE-Target3.csv
  Column separator = ;
  Precision = 10
#26.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> Feature aggregator => #29
Input signal=#11, Input stimulations=#25.New output -> Stimulation based epoching "SBE" => #30
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#30.Epoched signal -> CSV File Writer "SBENonTarget3"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-4cls-SBE-NonTarget3.csv
  Column separator = ;
  Precision = 10
#30.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> Feature aggregator => #33
#0.Output stream 2 -> Stimulation Filter "Stimulus 4" => #34
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#34, New input[1]=#6.Output stream 2 -> Target-NonTarget-Separator => #35
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#12, Input stimulations=#35.Stimulations -> Stimulation based epoching "SBE" => #36
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#36.Epoched signal -> CSV File Writer "SBETarget4"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-4cls-SBE-Target4.csv
  Column separator = ;
  Precision = 10
#36.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> Feature aggregator => #39
Input signal=#12, Input stimulations=#35.New output -> Stimulation based epoching "SBE" => #40
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#40.Epoched signal -> CSV File Writer "SBENonTarget4"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-4cls-SBE-NonTarget4.csv
  Column separator = ;
  Precision = 10
#40.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> Feature aggregator => #43
#0.Output stream 2 -> Stimulation Filter "Stimulus 1" => #44
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
New input[0]=#44, New input[1]=#6.Output stream 2 -> Target-NonTarget-Separator => #45
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#9, Input stimulations=#45.Stimulations -> Stimulation based epoching "SBE" => #46
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#46.Epoched signal -> CSV File Writer "SBETarget1"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-4cls-SBE-Target1.csv
  Column separator = ;
  Precision = 10
#46.Epoched signal -> Epoch average => #48
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-EpochAverageTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#48 -> Feature aggregator => #50
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-FeatureTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#9, Input stimulations=#45.New output -> Stimulation based epoching "SBE" => #52
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] stimulation-based-epoching.cfg
#52.Epoched signal -> CSV File Writer "SBENonTarget1"
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[$core{date}-$core{time}]-4cls-SBE-NonTarget1.csv
  Column separator = ;
  Precision = 10
#52.Epoched signal -> Epoch average => #54
  Averaging type = Epoch block average
  Epoch count = 10
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] p300-epoch-average-training.cfg
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-EpochAverageNonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#54 -> Feature aggregator => #56
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-FeatureNonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Timeout => #58
  Timeout delay = 150
  Output Stimulation = OVTK_StimulationId_ExperimentStop
Stimulations=#58, Features for class 1=#50, Features for class 2=#56 -> Classifier trainer 1 => #59
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/4cls-p300-classifier1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 2
Stimulations=#58, Features for class 1=#19, Features for class 2=#23 -> Classifier trainer 2 => #60
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/4cls-p300-classifier2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 2
Stimulations=#58, Features for class 1=#29, Features for class 2=#33 -> Classifier trainer 3 => #61
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/4cls-p300-classifier3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 2
Stimulations=#58, Features for class 1=#39, Features for class 2=#43 -> Classifier trainer 4 => #62
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/4cls-p300-classifier4.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = true
  Number of partitions for k-fold cross-validation test = 2
New input[0]=#59, New input[1]=#60, New input[2]=#61, New input[3]=#62 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop

0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/record-TemporalFilter1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
