OpenViBE-Scenario
Comment
  Take signal from 1.5 to 7.5 seconds (6.0 seconds) * 4 stimuli
  6.0 sec * 4 stimuli = 24.0 sec
  Totally: 256 Hz * 24.0 sec = 6144 plots
Comment
  Take 17 durations (1.2 sec window in each 0.3 sec) * 4 stimuli each
  (2.7 3.0 3.3 3.6 3.9 4.2 4.5 4.8 5.1 5.4 5.7 6.0 6.3 6.6 6.9 7.2 7.5)
  256 Hz * 1.2 sec = 307.2 -> 307 plots
  307 plots * 17 outputs =  5219 plots
  5219 plots * 4 stimuli = 20876 plots
Comment
  Take 16Ch for trial duration (7.5 seconds)
Comment
  Average those 17 durations * 4 stimuli => 68 plots each
Comment
  Cumulative average
Comment
  Read file from "[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg"
Comment
  Should be 2 features * 68 datas (17 durations * 4 stimuli)
  CSP filtered (8 chs) => 2 features
Comment
  Check! Which clasiffier is used? (1 class / 2 class/ 4 class)
Comment
  Take from 1.5 to 7.5 seconds (17 outputs)
  Then output 1 classification results
Comment
  Should be 200 features * 4 datas (1 duration * 4 stimuli)
  25 plots * 8 chs = 200 features
Comment
   SSVEP [s1 s2] + P300 [p1 p2] / 2   (due to EPOC) -> [(s1+p1)/2 (s2+p2)/2]

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Identity => #2
-> Channel Selector "9;10;11;12;13;14;15;16" => #3
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
#2 -> Channel Selector "1;2;3;4;5;6;7;8" => #4
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Start => #5
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
Incoming stimulations=#5 -> P300 Identifier Stimulator(modified) => #6
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 5
  Percent of repetitions containing the target = 100
  Number of repetitions = 5
  Number of trials = 4
  Flash duration (in sec) = 0.100
  No flash duration (in sec) = 0.200
  Inter-repetition delay (in sec) = 0
  Inter-trial delay (in sec) = 5
-> P300 Identifier Target Generation (modified) => #7
  Lua Script = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] (add0)original-P300-identifier-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 3
-> Stimulation Filter (P300-TARGET) => #8
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-TARGET)
  Host = localhost
  Port = 20322
#8 -> Stimulation listener (P300-TARGET)
  Log level to use = Information
Data=#2, Stimulations=#6 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#6 -> Identity => #12
-> 0xc67a01dc FlickerStimulationDelay_forTrial => #13
  Lua Script = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] FlickerStimulationDelay_forTrial.lua
  Trigger Stimulus = OVTK_StimulationId_TrialStart
  To Send Stimulus = OVTK_StimulationId_VisualStimulationStart
-> Stimulation listener (SSVEPFlicker Start&STOP)
  Log level to use = Information
#13 -> UDP Sender (SSVEPFlicker Start&STOP)
  Host = localhost
  Port = 20327
Input signal=#3, Input stimulations=#12 -> Stimulation based epoching "SBE (Trigger: P300 TrialStart)" => #16
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.5
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] SBE_Duration-6.0_Offset-1.5.cfg
#16.Epoched signal -> 0xc73e83ec (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal.csv
  Column separator = ;
  Precision = 10
#16.Epoched signal -> Spatial Filter 1
  Spatial Filter Coefficients = -4.071524e-001 2.798025e-004 4.719718e-003 2.717683e-001 -5.356888e-001 3.080169e-002 6.873393e-001 1.682978e-004 -4.170792e-002 4.230053e-001 -5.481673e-002 -2.883647e-001 -1.196446e-001 5.568482e-001 9.435797e-002 -6.323525e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 7.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
-> Time based epoching "TBE" => #20
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/recordTBETarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#20 -> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #25
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/record-SSVEPFeatureTarget1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#25 -> Classifier processor 1 => #27
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-1.cfg
#27.Hyperplane distance -> Epoch average "EPOC17" => #28
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "CSV matrix_1 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP1(EPOC17)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#27.Hyperplane distance -> 0xc73e83ec CSV File Writer "CSV matrix_1"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#16.Epoched signal -> Spatial Filter 2
  Spatial Filter Coefficients = -1.206653e-001 4.326489e-001 7.818754e-002 -2.476833e-001 -2.093061e-001 5.006915e-001 1.795596e-001 -6.356507e-001 -3.349211e-001 5.366677e-001 -1.467616e-001 7.921860e-002 4.317435e-001 -6.150852e-001 8.370981e-002 -1.617061e-002
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 2 => #38
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-2.cfg
#38.Hyperplane distance -> Epoch average "EPOC17" => #39
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "CSV matrix_2 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP2(EPOC17)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#38.Hyperplane distance -> 0xc73e83ec CSV File Writer "CSV matrix_2"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#16.Epoched signal -> Spatial Filter 3
  Spatial Filter Coefficients = -3.015643e-001 3.472360e-001 8.260952e-002 -1.427153e-001 1.628772e-002 4.510746e-001 1.469729e-001 -7.320926e-001 -6.491265e-001 8.917010e-002 2.298338e-001 -5.013242e-001 1.488926e-001 4.297944e-001 2.441659e-001 -4.972277e-003
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 15.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 3 => #49
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-3.cfg
#49.Hyperplane distance -> Epoch average "EPOC17" => #50
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "CSV matrix_3 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP3(EPOC17)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#49.Hyperplane distance -> 0xc73e83ec CSV File Writer "CSV matrix_3"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#16.Epoched signal -> Spatial Filter 4
  Spatial Filter Coefficients = -1.770858e-001 -5.671711e-001 5.190544e-001 -1.459271e-001 1.034362e-001 -2.155973e-001 -8.550411e-002 5.401418e-001 5.235004e-001 -3.106673e-001 4.082271e-001 -6.427387e-001 1.067676e-001 1.949212e-001 1.617603e-002 3.931229e-003
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 20.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 4 => #60
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-4.cfg
#60.Hyperplane distance -> Epoch average "EPOC17" => #61
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "CSV matrix_4 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP4(EPOC17)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#60.Hyperplane distance -> 0xc73e83ec CSV File Writer "CSV matrix_4"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Classification result 0=#27.Hyperplane distance, Classification result 1=#38.Hyperplane distance, Classification result 2=#49.Hyperplane distance, Classification result 3=#60.Hyperplane distance -> SSVEP Voting Classifier (17) => #64
  Number of repetitions = 17
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation listener "Result SSVEP Voting Classifier (17)"
  Log level to use = Information
#64 -> CSV File Writer "CSV Writer (SSVEP-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]Result-SSVEP.csv
  Column separator = ;
  Precision = 10
#12 -> Stimulation Filter (P300Trial Start&Stop) => #67
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> UDP Sender (P300Trial Start&Stop)
  Host = localhost
  Port = 20326
#67 -> Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
#6 -> Stimulation Filter (P300-Stimulation) => #70
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-Stimulation)
  Host = localhost
  Port = 20321
#5 -> UDP Sender (Experiment Start)
  Host = localhost
  Port = 20324
Input stream 1=#2, Input stream 2=#5 -> Identity => #73
Input signal=#73.Output stream 1, Input stimulations=#12 -> 0xc73e83ec Stimulation based epoching => #74
  Epoch duration (in sec) = 7.5
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] SBE_Duration-7.5_Offset-0.0.cfg
#74.Epoched signal -> 0xc73e83ec (During Trial) Trial CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]TrialRawSignal(16ch_7.5sec).csv
  Column separator = ,
  Precision = 10
Sequence stimulations=#6, Target stimulations=#7, Card selection stimulations=#121 -> P300 Identifier Card Visualisation => #76
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-identifier-card.ui
  Background color = 0,0,0
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Background Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/01.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/02.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/03.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
  Card filename =
  Card filename =
  Card filename =
Input stream 1=#70, Input stream 2=#8, Input stream 3=#76, Input stream 4=#12 -> Identity => #77
Input stream 1=#4, Input stream 2=#77.Output stream 4 -> Identity => #78
#78.Output stream 1 -> Temporal filter "LowPASS 9Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #80
  Decimation factor = 4
Input signal=#80, Input stimulations=#78.Output stream 2 -> Stimulation based epoching "SBE Label1" => #81
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#81.Epoched signal -> 0xc73e83ec Epoch average
  Averaging type = Cumulative average
  Epoch count = 5
-> 0xc73e83ec CSV File Writer "(Debug) CSV Writer"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/record-P300-EpochAve(cumlative)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#81.Epoched signal -> Epoch average => #84
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg
-> 0xc73e83ec CSV File Writer "(Debug) CSV Writer"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/record-P300-EpochAve(block)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#84 -> Feature aggregator => #86
-> Classifier processor => #87
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierA.cfg
#87.Hyperplane distance -> CSV File Writer "CSV matrix_1"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/P300_CLSP1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#87.Hyperplane distance, Input stream 2=#28 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #90
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "CSV matrix_1 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/MIXED_CLSP1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#87.Hyperplane distance, Input stream 2=#39 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #93
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "CSV matrix_2 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/MIXED_CLSP2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#86 -> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/record-P300FeatureTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#80, Input stimulations=#78.Output stream 2 -> Stimulation based epoching "SBE Label2" => #96
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#96.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor => #99
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierA.cfg
#99.Hyperplane distance -> CSV File Writer "CSV matrix_2"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/P300_CLSP2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#80, Input stimulations=#78.Output stream 2 -> Stimulation based epoching "SBE Label3" => #101
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#101.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor => #104
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierB.cfg
#104.Hyperplane distance -> CSV File Writer "CSV matrix_3"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/P300_CLSP3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#104.Hyperplane distance, Input stream 2=#50 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #107
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "CSV matrix_3 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/MIXED_CLSP3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#80, Input stimulations=#78.Output stream 2 -> Stimulation based epoching "SBE Label4" => #109
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#109.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor => #112
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierB.cfg
Classification result 0=#87.Hyperplane distance, Classification result 1=#99.Hyperplane distance, Classification result 2=#104.Hyperplane distance, Classification result 3=#112.Hyperplane distance -> P300 Voting Classifier(1)
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation Filter (P300-Classification-Result) => #114
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_04
-> Stimulation listener "Result P300 Voting Classifier (1)"
  Log level to use = Information
#114 -> CSV File Writer "CSV Writer (P300-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]Result-P300.csv
  Column separator = ;
  Precision = 10
#112.Hyperplane distance -> CSV File Writer "CSV matrix_4"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/P300_CLSP4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#112.Hyperplane distance, Input stream 2=#61 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #119
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "CSV matrix_4 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/MIXED_CLSP4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Classification result 0=#90, Classification result 1=#93, Classification result 2=#107, Classification result 3=#119 -> Hybrid Voting Classifier (1) => #121
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> UDP Sender (Hybrid-Classification-Result)
  Host = localhost
  Port = 20323
#121 -> Stimulation listener "Result Hybrid Voting Classifier (1)"
  Log level to use = Information
#121 -> CSV File Writer "CSV Writer (Hybrid-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]Result-Hybrid.csv
  Column separator = ;
  Precision = 10
Input stream 1=#73.Output stream 1, Input stream 3=#77.Output stream 1, Input stream 5[2]=#77.Output stream 2, Input stream 6=#77.Output stream 3, Input stream 5[4]=#77.Output stream 4, Input stream 7=#73.Output stream 2 -> Generic stream writer "Ch1-16(All)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[$core{date}-$core{time}]AcquiredSignal(Exp).ov
  Use compression = false
