OpenViBE-Scenario
Comment
  Take signal from 1.5 to 7.5 seconds (6.0 seconds) * 4 stimuli
  6.0 sec * 4 stimuli = 24.0 sec
  Totally: 256 Hz * 24.0 sec = 6144 plots
Comment
  Take 17 durations (1.2 sec window in each 0.3 sec) * 4 stimuli each
  (2.7 3.0 3.3 3.6 3.9 4.2 4.5 4.8 5.1 5.4 5.7 6.0 6.3 6.6 6.9 7.2 7.5)
  256 Hz * 1.2 sec = 307.2 -> 307 plots
  307 plots * 17 outputs =  5219 plots
  5219 plots * 4 stimuli = 20876 plots
Comment
  Average those 17 durations * 4 stimuli => 68 plots each
Comment
  Should be 2 features * 68 datas (17 durations * 4 stimuli)
  CSP filtered (8 chs) => 2 features
Comment
  Take from 1.5 to 7.5 seconds (17 outputs)
  Then output 1 classification results
Comment
  Check! Which clasiffier is used? (1 class / 2 class/ 4 class)
Comment
  Should be 200 features * 20 datas (5 duration * 4 stimuli)
  25 plots * 8 chs = 200 features
Comment
   SSVEP [s1 s2] + P300 [p1 p2] / 2   (due to EPOC) -> [(s1+p1)/2 (s2+p2)/2]

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Channel Selector "9;10;11;12;13;14;15;16" => #2
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
#1.Signal stream -> Channel Selector "1;2;3;4;5;6;7;8" => #3
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Start => #4
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
Incoming stimulations=#4 -> P300 Identifier Stimulator(modified) => #5
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 5
  Percent of repetitions containing the target = 100
  Number of repetitions = 5
  Number of trials = 4
  Flash duration (in sec) = 0.100
  No flash duration (in sec) = 0.200
  Inter-repetition delay (in sec) = 0
  Inter-trial delay (in sec) = 5
-> P300 Identifier Target Generation (modified) => #6
  Lua Script = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] (add0)original-P300-identifier-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 3
-> Stimulation Filter (P300-TARGET) => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-TARGET)
  Host = localhost
  Port = 20322
#7 -> Stimulation listener (P300-TARGET)
  Log level to use = Information
Data=#1.Signal stream, Stimulations=#5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#5 -> Identity => #11
Input signal=#2, Input stimulations=#11 -> Stimulation based epoching "SBE (Trigger: P300 TrialStart)" => #12
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.5
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] SBE_Duration-6.0_Offset-1.5.cfg
#12.Epoched signal -> Spatial Filter 1
  Spatial Filter Coefficients = -6.344952e-002 1.023989e-001 2.698167e-001 1.772979e-001 2.170752e-001 -7.123834e-001 -4.455931e-001 -3.578940e-001 -7.479385e-002 3.677648e-001 -1.026203e-001 6.724760e-002 -3.587959e-003 -3.921496e-001 -6.849125e-002 8.280196e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-1.cfg
-> 0xc67a01dc Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10
  High cut frequency (Hz) = 11.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
-> Time based epoching "TBE" => #15
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/recordTBETarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#15 -> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #20
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/record-SSVEPFeatureTarget1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#20 -> Classifier processor 1 => #22
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-1.cfg
#22.Hyperplane distance -> 0xc73e83ec CSV File Writer "CSV matrix_1"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#22.Hyperplane distance -> Epoch average "EPOC17" => #24
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "CSV matrix_1 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP1(EPOC17)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#12.Epoched signal -> Spatial Filter 2
  Spatial Filter Coefficients = -1.642429e-001 8.421151e-001 -1.379618e-001 3.893345e-001 2.309236e-001 1.901936e-001 -1.644452e-003 -6.123334e-002 -2.931331e-002 -7.792243e-002 7.324544e-002 1.566964e-001 -2.876419e-003 8.782636e-001 -2.825117e-001 3.346373e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 15
  High cut frequency (Hz) = 16.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 2 => #33
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-2.cfg
#33.Hyperplane distance -> 0xc73e83ec CSV File Writer "CSV matrix_2"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#33.Hyperplane distance -> Epoch average "EPOC17" => #35
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "CSV matrix_2 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP2(EPOC17)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#12.Epoched signal -> Spatial Filter 3
  Spatial Filter Coefficients = 3.144252e-001 1.534591e-001 -2.724394e-001 -4.699774e-001 4.266717e-001 4.708855e-001 -2.788714e-001 -3.177011e-001 -3.755501e-001 -8.885804e-002 -7.131391e-001 2.450235e-001 3.430092e-001 2.354736e-001 6.565833e-002 3.241116e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 13.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 3 => #44
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-3.cfg
#44.Hyperplane distance -> 0xc73e83ec CSV File Writer "CSV matrix_3"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#44.Hyperplane distance -> Epoch average "EPOC17" => #46
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "CSV matrix_3 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP3(EPOC17)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#12.Epoched signal -> Spatial Filter 4
  Spatial Filter Coefficients = -5.307670e-001 5.680615e-001 5.522979e-001 -1.482954e-001 5.448224e-002 1.639572e-001 1.937006e-001 3.460892e-002 4.955249e-002 4.834323e-002 2.156011e-001 4.814136e-001 6.027832e-001 -5.891903e-001 -7.833497e-002 -1.831216e-002
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 17
  High cut frequency (Hz) = 18.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 4 => #55
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-4.cfg
#55.Hyperplane distance -> 0xc73e83ec CSV File Writer "CSV matrix_4"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Classification result 0=#22.Hyperplane distance, Classification result 1=#33.Hyperplane distance, Classification result 2=#44.Hyperplane distance, Classification result 3=#55.Hyperplane distance -> SSVEP Voting Classifier (17) => #57
  Number of repetitions = 17
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation listener "RESULT SSVEP Voting Classifier (17)"
  Log level to use = Information
#57 -> CSV File Writer "CSV Writer (SSVEP-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]Result-SSVEP.csv
  Column separator = ;
  Precision = 10
#55.Hyperplane distance -> Epoch average "EPOC17" => #60
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "CSV matrix_4 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/SSVEP_CLSP4(EPOC17)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#12.Epoched signal -> (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal.csv
  Column separator = ;
  Precision = 10
#11 -> Stimulation Filter (P300Trial Start&Stop) => #63
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> UDP Sender (P300Trial Start&Stop)
  Host = localhost
  Port = 20326
#63 -> Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
#5 -> Stimulation Filter (P300-Stimulation) => #66
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-Stimulation)
  Host = localhost
  Port = 20321
#4 -> UDP Sender (Experiment Start)
  Host = localhost
  Port = 20324
Input stream 1=#1.Signal stream, Input stream 2=#4 -> Identity => #69
Stimulation multiplexer => #70
Sequence stimulations=#5, Target stimulations=#6, Card selection stimulations=#191 -> P300 Identifier Card Visualisation => #71
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-identifier-card.ui
  Background color = 0,0,0
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Background Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/01.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/02.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/03.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
  Card filename =
  Card filename =
  Card filename =
Input stream 1=#66, Input stream 2=#7, Input stream 3=#71, Input stream 4=#11 -> Identity => #72
Input stream 1=#3, Input stream 2=#72.Output stream 4 -> Identity => #73
#73.Output stream 1 -> Temporal filter "LowPASS 10Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 10.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #75
  Decimation factor = 4
#73.Output stream 2 -> Stimulation Counter => #76
  Lua Script = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] StimulationCounter.lua
  Trigger Stimulation = OVTK_StimulationId_Label_01
  Counter1 = OVTK_StimulationId_Label_11
  Counter2 = OVTK_StimulationId_Label_12
  Counter3 = OVTK_StimulationId_Label_13
  Counter4 = OVTK_StimulationId_Label_14
  Counter5 = OVTK_StimulationId_Label_15
Input stream 1=#75, Input stream 2=#76.Stimulations -> Identity => #77
Input signal=#77.Output stream 1, Input stimulations=#77.Output stream 2 -> Stimulation based epoching "SBE Label1-1" => #78
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_11
#78.Epoched signal -> 0xc73e83ec CSV File Writer "(Debug) CSV Writer"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/record-P300-SlideEpoc-Label1-1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#77.Output stream 1, Input stimulations=#77.Output stream 2 -> Stimulation based epoching "SBE Label1-2" => #80
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_12
Input signal=#77.Output stream 1, Input stimulations=#77.Output stream 2 -> Stimulation based epoching "SBE Label1-3" => #81
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_13
Input signal=#77.Output stream 1, Input stimulations=#77.Output stream 2 -> Stimulation based epoching "SBE Label1-4" => #82
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_14
Input stream 1=#78.Epoched signal, Input stream 2=#80.Epoched signal, Input stream 3=#81.Epoched signal, Input stream 4=#82.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #85
Input signal=#77.Output stream 1, Input stimulations=#77.Output stream 2 -> Stimulation based epoching "SBE Label1-5" => #86
  Epoch duration (in sec) = 0.100000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_15
Input stream 1=#80.Epoched signal, Input stream 2=#81.Epoched signal, Input stream 3=#82.Epoched signal, Input stream 4=#86.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #89
Input stream 1=#78.Epoched signal, Input stream 2=#81.Epoched signal, Input stream 3=#82.Epoched signal, Input stream 4=#86.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #92
Input stream 1=#78.Epoched signal, Input stream 2=#80.Epoched signal, Input stream 3=#82.Epoched signal, Input stream 4=#86.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #95
Input stream 1=#78.Epoched signal, Input stream 2=#80.Epoched signal, Input stream 3=#81.Epoched signal, Input stream 4=#86.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #98
Input stream 1=#85, Input stream 2=#89, Input stream 3=#92, Input stream 4=#95, Input stream 5=#98 -> Streamed matrix multiplexer
-> Classifier processor => #100
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierA.cfg
#100.Hyperplane distance -> Epoch average "EPOC5" => #101
  Averaging type = Epoch block average
  Epoch count = 5
-> CSV File Writer "CSV matrix_1"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/P300_CLSP1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#101, Input stream 2=#24 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #104
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "CSV matrix_1 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/MIXED_CLSP1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#75, Input stream 2=#76.New output[1] -> Identity => #106
Input signal=#106.Output stream 1, Input stimulations=#106.Output stream 2 -> Stimulation based epoching "SBE Label2-1" => #107
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_11
Input signal=#106.Output stream 1, Input stimulations=#106.Output stream 2 -> Stimulation based epoching "SBE Label2-2" => #108
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_12
Input signal=#106.Output stream 1, Input stimulations=#106.Output stream 2 -> Stimulation based epoching "SBE Label2-3" => #109
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_13
Input signal=#106.Output stream 1, Input stimulations=#106.Output stream 2 -> Stimulation based epoching "SBE Label2-4" => #110
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_14
Input stream 1=#107.Epoched signal, Input stream 2=#108.Epoched signal, Input stream 3=#109.Epoched signal, Input stream 4=#110.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #113
Input signal=#106.Output stream 1, Input stimulations=#106.Output stream 2 -> Stimulation based epoching "SBE Label2-5" => #114
  Epoch duration (in sec) = 0.100000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_15
Input stream 1=#108.Epoched signal, Input stream 2=#109.Epoched signal, Input stream 3=#110.Epoched signal, Input stream 4=#114.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #117
Input stream 1=#107.Epoched signal, Input stream 2=#109.Epoched signal, Input stream 3=#110.Epoched signal, Input stream 4=#114.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #120
Input stream 1=#107.Epoched signal, Input stream 2=#108.Epoched signal, Input stream 3=#110.Epoched signal, Input stream 4=#114.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #123
Input stream 1=#107.Epoched signal, Input stream 2=#108.Epoched signal, Input stream 3=#109.Epoched signal, Input stream 4=#114.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #126
Input stream 1=#113, Input stream 2=#117, Input stream 3=#120, Input stream 4=#123, Input stream 5=#126 -> Streamed matrix multiplexer => #127
-> Classifier processor => #128
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierA.cfg
#128.Hyperplane distance -> Epoch average "EPOC5" => #129
  Averaging type = Epoch block average
  Epoch count = 5
-> CSV File Writer "CSV matrix_2"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/P300_CLSP2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#129, Input stream 2=#35 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #132
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "CSV matrix_2 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/MIXED_CLSP2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#127 -> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/record-P300FeatureTarget1_SlideEpoching[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input stream 1=#75, Input stream 2=#76.New output[2] -> Identity => #135
Input signal=#135.Output stream 1, Input stimulations=#135.Output stream 2 -> Stimulation based epoching "SBE Label3-1" => #136
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_11
Input signal=#135.Output stream 1, Input stimulations=#135.Output stream 2 -> Stimulation based epoching "SBE Label3-2" => #137
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_12
Input signal=#135.Output stream 1, Input stimulations=#135.Output stream 2 -> Stimulation based epoching "SBE Label3-3" => #138
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_13
Input signal=#135.Output stream 1, Input stimulations=#135.Output stream 2 -> Stimulation based epoching "SBE Label3-4" => #139
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_14
Input stream 1=#136.Epoched signal, Input stream 2=#137.Epoched signal, Input stream 3=#138.Epoched signal, Input stream 4=#139.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #142
Input signal=#135.Output stream 1, Input stimulations=#135.Output stream 2 -> Stimulation based epoching "SBE Label3-5" => #143
  Epoch duration (in sec) = 0.100000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_15
Input stream 1=#137.Epoched signal, Input stream 2=#138.Epoched signal, Input stream 3=#139.Epoched signal, Input stream 4=#143.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #146
Input stream 1=#136.Epoched signal, Input stream 2=#138.Epoched signal, Input stream 3=#139.Epoched signal, Input stream 4=#143.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #149
Input stream 1=#136.Epoched signal, Input stream 2=#137.Epoched signal, Input stream 3=#139.Epoched signal, Input stream 4=#143.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #152
Input stream 1=#136.Epoched signal, Input stream 2=#137.Epoched signal, Input stream 3=#138.Epoched signal, Input stream 4=#143.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #155
Input stream 1=#142, Input stream 2=#146, Input stream 3=#149, Input stream 4=#152, Input stream 5=#155 -> Streamed matrix multiplexer
-> Classifier processor => #157
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierB.cfg
#157.Hyperplane distance -> Epoch average "EPOC5" => #158
  Averaging type = Epoch block average
  Epoch count = 5
-> CSV File Writer "CSV matrix_3"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/P300_CLSP3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#158, Input stream 2=#46 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #161
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "CSV matrix_3 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/MIXED_CLSP3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#75, Input stream 2=#76.New output[3] -> Identity => #163
Input signal=#163.Output stream 1, Input stimulations=#163.Output stream 2 -> Stimulation based epoching "SBE Label4-1" => #164
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_11
Input signal=#163.Output stream 1, Input stimulations=#163.Output stream 2 -> Stimulation based epoching "SBE Label4-2" => #165
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_12
Input signal=#163.Output stream 1, Input stimulations=#163.Output stream 2 -> Stimulation based epoching "SBE Label4-3" => #166
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_13
Input signal=#163.Output stream 1, Input stimulations=#163.Output stream 2 -> Stimulation based epoching "SBE Label4-4" => #167
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_14
Input stream 1=#164.Epoched signal, Input stream 2=#165.Epoched signal, Input stream 3=#166.Epoched signal, Input stream 4=#167.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #170
Input signal=#163.Output stream 1, Input stimulations=#163.Output stream 2 -> Stimulation based epoching "SBE Label4-5" => #171
  Epoch duration (in sec) = 0.100000
  Epoch offset (in sec) = 0.400000
  Stimulation to epoch from = OVTK_StimulationId_Label_15
Input stream 1=#165.Epoched signal, Input stream 2=#166.Epoched signal, Input stream 3=#167.Epoched signal, Input stream 4=#171.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #174
Input stream 1=#164.Epoched signal, Input stream 2=#166.Epoched signal, Input stream 3=#167.Epoched signal, Input stream 4=#171.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #177
Input stream 1=#164.Epoched signal, Input stream 2=#165.Epoched signal, Input stream 3=#167.Epoched signal, Input stream 4=#171.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #180
Input stream 1=#164.Epoched signal, Input stream 2=#165.Epoched signal, Input stream 3=#166.Epoched signal, Input stream 4=#171.Epoched signal -> Streamed matrix multiplexer
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 4
-> Feature aggregator => #183
Input stream 1=#170, Input stream 2=#174, Input stream 3=#177, Input stream 4=#180, Input stream 5=#183 -> Streamed matrix multiplexer
-> Classifier processor => #185
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierB.cfg
#185.Hyperplane distance -> Epoch average "EPOC5" => #186
  Averaging type = Epoch block average
  Epoch count = 5
-> CSV File Writer "CSV matrix_4"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/P300_CLSP4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#186, Input stream 2=#60 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #189
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "CSV matrix_4 (EPOC)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/MIXED_CLSP4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Classification result 0=#104, Classification result 1=#132, Classification result 2=#161, Classification result 3=#189 -> Hybrid Voting Classifier (1) => #191
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation listener "RESULT Hybrid Voting Classifier (1)"
  Log level to use = Information
#191 -> CSV File Writer "CSV Writer (Hybrid-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]Result-Hybrid.csv
  Column separator = ;
  Precision = 10
#191 -> UDP Sender (Hybrid-Classification-Result)
  Host = localhost
  Port = 20323
Classification result 0=#100.Hyperplane distance, Classification result 1=#128.Hyperplane distance, Classification result 2=#157.Hyperplane distance, Classification result 3=#185.Hyperplane distance -> P300 Voting Classifier(5)
  Number of repetitions = 5
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation Filter (P300-Classification-Result) => #196
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_04
-> Stimulation listener "RESULT P300 Voting Classifier (5)"
  Log level to use = Information
#196 -> CSV File Writer "CSV Writer (P300-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]Result-P300.csv
  Column separator = ;
  Precision = 10
Input stream 1=#69.Output stream 1, Input stream 3=#72.Output stream 1, Input stream 5[2]=#72.Output stream 2, Input stream 6[3]=#72.Output stream 3, Input stream 5[4]=#72.Output stream 4, Input stream 6[5]=#70, Input stream 7=#69.Output stream 2 -> Generic stream writer "Ch1-16(All)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[$core{date}-$core{time}]AcquiredSignal(ALL).ov
  Use compression = false
