OpenViBE-Scenario
Comment
  Configurable box
Comment
  Take from 1.5 to 7.5 seconds (12 outputs)
  Then output 12 classification results ( output each 0.3 sec and began from 1.2 sec)
  4.2 4.5 4.8 5.1 5.4 5.7
  6.0 6.3 6.6 6.9 7.2 7.5
Comment
  Read file from "[6-Hybrid] ExperimentalSignalFiles/[6] p300-epoch-average.cfg"
Comment
  Check! Which clasiffier is used? (1 class / 2 class/ 4 class)
Comment
  Take from 1.5 to 7.5 seconds (12 outputs)
  Then output 12 classification results ( output each 0.3 sec and began from 1.2 sec)
  4.2 4.5 4.8 5.1 5.4 5.7
  6.0 6.3 6.6 6.9 7.2 7.5

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] AcquiredSignal(ALL).cfg

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Channel Selector "9;10;11;12;13;14;15;16" => #2
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
#1.Signal stream -> Channel Selector "1;2;3;4;5;6;7;8" => #3
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Start => #4
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
Incoming stimulations=#4 -> P300 Identifier Stimulator(modified) => #5
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 5
  Percent of repetitions containing the target = 100
  Number of repetitions = 5
  Number of trials = 4
  Flash duration (in sec) = 0.100
  No flash duration (in sec) = 0.200
  Inter-repetition delay (in sec) = 0
  Inter-trial delay (in sec) = 5
-> P300 Identifier Target Generation (modified) => #6
  Lua Script = ${Player_ScenarioDirectory}/Script/[2] (add0)original-P300-identifier-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 3
-> Stimulation Filter (P300-TARGET) => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-TARGET)
  Host = localhost
  Port = 20322
Data=#1.Signal stream, Stimulations=#5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#5 -> Identity => #10
Input signal=#2, Input stimulations=#10 -> 0xc67a01dc Stimulation based epoching "SBE (Trigger: P300 TrialStart)" => #11
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] SBE_Duration-6.0_Offset-1.5.cfg
#11.Epoched signal -> (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPRawSignal.csv
  Column separator = ;
  Precision = 10
#11.Epoched signal -> 0xc73e83ec Spatial Filter "Average"
  Spatial filter coefficients = 1;1;1;1;1;1;1;1;
  Number of output channels = 1
  Number of input channels = 8
  Filter matrix file =
-> 0xc73e83ec Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> 0xc73e83ec Time based epoching "TBE" => #15
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> 0xc73e83ec Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
#15 -> 0xc73e83ec Spectral analysis => #17
  Spectral components = Amplitude
#17.Amplitude -> 0xc73e83ec FFT of average signal
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#17.Amplitude -> 0xc73e83ec (FFT spectral) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPFFTSpectralSignal.csv
  Column separator = ;
  Precision = 10
#11.Epoched signal -> Spatial Filter 1
  Spatial Filter Coefficients = 8.569512e-001 4.692009e-001 7.128451e-002 2.003184e-001 -1.563381e-002 2.765700e-003 -4.680146e-003 -1.480438e-003 -4.267386e-001 4.379713e-001 7.752078e-001 -1.542885e-001 -3.613916e-002 2.784139e-003 -1.016562e-003 -2.901664e-003
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10
  High cut frequency (Hz) = 11.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 1 => #27
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-1.cfg
#27.Hyperplane distance -> CSV File Writer "CSV matrix_1"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]streamed-matrix_1.csv
  Column separator = ;
  Precision = 10
#11.Epoched signal -> Spatial Filter 2
  Spatial Filter Coefficients = -1.661281e-003 2.047664e-001 -2.729691e-001 9.794092e-002 3.607480e-001 -6.010186e-001 -4.354334e-001 4.393162e-001 3.347244e-003 -1.325084e-001 2.778942e-001 8.290531e-001 4.525986e-001 -4.248485e-002 1.023592e-001 -2.735356e-002
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 15
  High cut frequency (Hz) = 16.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 2 => #36
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-2.cfg
#36.Hyperplane distance -> CSV File Writer "CSV matrix_2"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]streamed-matrix_2.csv
  Column separator = ;
  Precision = 10
#11.Epoched signal -> Spatial Filter 3
  Spatial Filter Coefficients = 1.405911e-001 -6.126679e-001 -2.217049e-001 3.153136e-001 6.677958e-001 -1.012451e-001 9.482376e-003 -2.180891e-003 -4.679574e-001 6.284257e-001 -3.831328e-001 2.297611e-001 3.444883e-001 -2.591538e-001 2.457164e-002 8.915007e-003
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 13.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 3 => #45
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-3.cfg
#45.Hyperplane distance -> CSV File Writer "CSV matrix_3"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]streamed-matrix_3.csv
  Column separator = ;
  Precision = 10
#11.Epoched signal -> Spatial Filter 4
  Spatial Filter Coefficients = -2.639062e-004 2.745977e-003 4.063633e-002 3.216202e-001 1.143430e-001 -5.982522e-001 6.566805e-001 3.044540e-001 2.344504e-003 9.816257e-004 -1.871673e-001 -1.253917e-001 -1.706365e-001 -4.057631e-001 -4.462132e-001 7.459036e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3-Hybrid] SSVEPCSPTrainingFiles/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 17
  High cut frequency (Hz) = 18.9999
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 4 => #54
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/classifier-4.cfg
#54.Hyperplane distance -> CSV File Writer "CSV matrix_4"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]streamed-matrix_4.csv
  Column separator = ;
  Precision = 10
Classification result 0=#27.Hyperplane distance, Classification result 1=#36.Hyperplane distance, Classification result 2=#45.Hyperplane distance, Classification result 3=#54.Hyperplane distance -> SSVEP Voting Classifier (12) => #56
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation listener "Result SSVEP Voting Classifier (12)"
  Log level to use = Information
#56 -> CSV File Writer "CSV Writer (SSVEP-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]SSVEPClassificationResult.csv
  Column separator = ;
  Precision = 10
#56 -> UDP Sender (P300-Classification-Result)
  Host = localhost
  Port = 20323
#10 -> Stimulation Filter (P300Trial Start&Stop)
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> UDP Sender (P300Trial Start&Stop)
  Host = localhost
  Port = 20326
#5 -> Stimulation Filter (P300-Stimulation) => #62
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-Stimulation)
  Host = localhost
  Port = 20321
#4 -> UDP Sender (Experiment Start)
  Host = localhost
  Port = 20324
#4 -> 0xc73e83ec SSVEP Training Controller => #65
  Lua Script = ${Player_ScenarioDirectory}/Script/[2] SSVEP-stimulus-generator.lua
  Goal sequence = 1 2 3 4
  Stimulation duration = 7.5
  Break duration = 3
  Flickering delay = 2.000000
#65.New output -> 0xc73e83ec UDP Sender (SSVEP Target Number)
  Host = localhost
  Port = 20322
#65.Stimulations -> 0xc73e83ec Stimulation Filter (VisualStimulation Start&Stop) => #67
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_VisualStimulationStart
  Stimulation range end = OVTK_StimulationId_VisualStimulationStop
-> 0xc73e83ec Stimulation listener (VisualStimulation Start&Stop)
  Log level to use = Information
#67 -> 0xc73e83ec UDP Sender (VisualStimulation Start&Stop)
  Host = localhost
  Port = 20326
Input stimulations 1=#65.Stimulations, Input stimulations 2=#65.New output -> Stimulation multiplexer => #70
Input stream 1=#1.Signal stream, Input stream 2=#4 -> Identity => #71
Sequence stimulations=#5, Target stimulations=#6, Card selection stimulations=#94 -> P300 Identifier Card Visualisation => #72
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-identifier-card.ui
  Background color = 0,0,0
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Background Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/01.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/02.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/03.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
  Card filename =
  Card filename =
  Card filename =
Input stream 1=#62, Input stream 2=#7, Input stream 3=#72, Input stream 4=#10 -> Identity => #73
Input stream 1=#3, Input stream 2=#73.Output stream 4 -> Identity => #74
#74.Output stream 1 -> Temporal filter "LowPASS 10Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 10.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #76
  Decimation factor = 4
Input signal=#76, Input stimulations=#74.Output stream 2 -> Stimulation based epoching "SBE Label1" => #77
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#77.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor => #80
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierA.cfg
Input signal=#76, Input stimulations=#74.Output stream 2 -> Stimulation based epoching "SBE Label2" => #81
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#81.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor => #84
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierA.cfg
Input signal=#76, Input stimulations=#74.Output stream 2 -> Stimulation based epoching "SBE Label3" => #85
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#85.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor => #88
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierB.cfg
Input signal=#76, Input stimulations=#74.Output stream 2 -> Stimulation based epoching "SBE Label4" => #89
  Epoch duration (in sec) = 0.400000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#89.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg
-> Feature aggregator
-> Classifier processor => #92
  Filename to load configuration from = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/2cls-p300-classifierB.cfg
Classification result 0=#80.Hyperplane distance, Classification result 1=#84.Hyperplane distance, Classification result 2=#88.Hyperplane distance, Classification result 3=#92.Hyperplane distance -> P300 Voting Classifier
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation Filter (P300-Classification-Result) => #94
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_04
-> CSV File Writer "CSV Writer (P300-Classification-Result)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/[$core{date}-$core{time}]P300ClassificationResult.csv
  Column separator = ;
  Precision = 10
Input stream 1=#71.Output stream 1, Input stream 3=#73.Output stream 1, Input stream 5[2]=#73.Output stream 2, Input stream 6[3]=#73.Output stream 3, Input stream 5[4]=#73.Output stream 4, Input stream 6[5]=#70, Input stream 7=#71.Output stream 2 -> Generic stream writer "Ch1-16(All)"
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[$core{date}-$core{time}]AcquiredSignal(ALL).ov
  Use compression = false
