OpenViBE-Scenario
Comment
  [6-Hybrid] ExperimentalSignalFiles/[6] AcquiredSignal(ALL).cfg
Comment
  Take 16Ch for trial duration (7.5 seconds)
  256Hz * 7.5sec * 4trials = 7680 plots
Comment
  Target and NonTarget Stimulus in duration
  256 * 0.4 = 102 plots
  TARGET = 5 times * 4 trials * 102 plots = 2040 plots
  NonTARGET = 20 times * 4 trials * 102 plots = 8160 plots
Comment
  Target and NonTarget Stimulus for Target1
  256 * 0.4 = 102 plots
  TARGET = 5 times * 102 plots = 510 plots
  NonTARGET = 15 times * 102 plots = 1530 plots

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[2016.02.01-15.22.04]AcquiredSignal(Trial).ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[6] AcquiredSignal(ALL).cfg
Data=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Output stream 2 -> 0xc73e83ec Stimulation listener "2: Stimulation sequence"
  Log level to use = Information
#0.Output stream 3 -> 0xc73e83ec Stimulation listener "3: Target Stimuli"
  Log level to use = Information
#0.Output stream 2 -> 0xc67a01dc Stimulation Filter "2: Stimulation sequence" => #4
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
#0.Output stream 3 -> 0xc67a01dc Stimulation Filter "3: Target Stimuli" => #5
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_04
Input stream 1=#0.Output stream 1, Input stream 2=#4, Input stream 3=#5 -> Identity => #6
#6.Output stream 2 -> Stimulation Filter "Stimulus 1" => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
#6.Output stream 2 -> Stimulation Filter "Stimulus 2" => #8
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
Input stream 1=#6.Output stream 1, Input stream 2=#6.Output stream 3 -> Identity "Target" => #9
#9.Output stream 1 -> Identity => #10
New input[0]=#7, New input[1]=#9.Output stream 2 -> Target-NonTarget-Separator => #11
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#10, Input stimulations=#11.Stimulations -> Stimulation based epoching => #12
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#12.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-Target1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#10, Input stimulations=#11.New output -> Stimulation based epoching => #14
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#14.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-NonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#9.Output stream 1 -> Identity => #16
New input[0]=#8, New input[1]=#9.Output stream 2 -> Target-NonTarget-Separator => #17
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#16, Input stimulations=#17.Stimulations -> Stimulation based epoching => #18
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#18.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-Target2[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#16, Input stimulations=#17.New output -> Stimulation based epoching => #20
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#20.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-NonTarget2[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#9.Output stream 1 -> Identity => #22
#9.Output stream 1 -> Identity => #23
#6.Output stream 2 -> Stimulation Filter "Stimulus 3" => #24
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#24, New input[1]=#9.Output stream 2 -> Target-NonTarget-Separator => #25
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#22, Input stimulations=#25.Stimulations -> Stimulation based epoching => #26
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#26.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-Target3[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#22, Input stimulations=#25.New output -> Stimulation based epoching => #28
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#28.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-NonTarget3[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#6.Output stream 2 -> Stimulation Filter "Stimulus 4" => #30
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#30, New input[1]=#9.Output stream 2 -> Target-NonTarget-Separator => #31
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#23, Input stimulations=#31.Stimulations -> Stimulation based epoching => #32
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#32.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-Target4[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#23, Input stimulations=#31.New output -> Stimulation based epoching => #34
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#34.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-NonTarget4[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #36
#36.Output stream 1 -> Identity => #37
New input[0]=#36.Output stream 2, New input[1]=#36.Output stream 3 -> Target-NonTarget-Separator => #38
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#37, Input stimulations=#38.Stimulations -> Stimulation based epoching => #39
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#39.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-AllTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#37, Input stimulations=#38.New output -> Stimulation based epoching => #41
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#41.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-AllNonTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#0.Output stream 1, Input stimulations=#0.Output stream 5 -> Stimulation based epoching => #43
  Epoch duration (in sec) = 7.5
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] SBE_Duration-7.5_Offset-0.0.cfg
#43.Epoched signal -> (During Trial) Trial CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] TrialRawSignal(16ch_7.5sec)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
