OpenViBE-Scenario
Comment
  PersonalData (ov+cfg)/[6] AcquiredSignal(ALL).cfg
Comment
  Take 16Ch for trial duration (7.5 seconds)
  256Hz * 7.5sec * 4trials = 7680 plots
Comment
  Target and NonTarget Stimulus in duration
  256 * 0.7 = 179 plots
  TARGET = 5 times * 4 trials * 179 plots = 3580 plots
  NonTARGET = 20 times * 4 trials * 179 plots = 14320 plots
Comment
  Take signal from 1.5 to 7.5 seconds (6.0 seconds) * 4 stimuli
  6.0 sec * 4 stimuli = 24.0 sec
  Totally: 256 Hz * 24.0 sec = 6144 plots
Comment
  Target and NonTarget Stimulus for Target1
  256 * 0.7 = 179 plots
  TARGET = 5 times * 179 plots = 895 plots
  NonTARGET = 15 times * 179 plots = 2685 plots
Comment
  Read file from "[6-Hybrid] ExperimentalSignalFiles/[6] P300EpochAverage_5.cfg"
Comment
  Take 17 durations (1.2 sec window in each 0.3 sec) * 4 stimuli each
  (2.7 3.0 3.3 3.6 3.9 4.2 4.5 4.8 5.1 5.4 5.7 6.0 6.3 6.6 6.9 7.2 7.5)
  256 Hz * 1.2 sec = 307.2 -> 307 plots
  307 plots * 17 outputs =  5219 plots
  5219 plots * 4 stimuli = 20876 plots
Comment
  Should be 200 features * 4 datas (1 duration * 4 stimuli)
  25 plots * 8 chs = 200 features
Comment
  Average those 17 durations * 4 stimuli => 68 plots each
Comment
  Should be 2 features * 68 datas (17 durations * 4 stimuli)
  CSP filtered (8 chs) => 2 features
Comment
  Take from 1.5 to 7.5 seconds (17 outputs)
  Then output 1 classification results
Comment
   SSVEP [s1 s2] + P300 [p1 p2] / 2   (due to EPOC) -> [(s1+p1)/2 (s2+p2)/2]

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[6] AcquiredSignal(Trial5)[2016.02.05-10.37.20].ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[6] AcquiredSignal(Trial).cfg
#0.Output stream 2 -> Stimulation Filter "2: Stimulation sequence" => #1
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
#0.Output stream 3 -> Stimulation Filter "3: Target Stimuli" => #2
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_04
Input stream 1=#0.Output stream 1, Input stream 2=#1, Input stream 3=#2 -> Identity => #3
#3.Output stream 1 -> Channel Selector "1;2;3;4;5;6;7;8"
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "LowPASS 9Hz for P300 signals"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #6
  Decimation factor = 4
Input stream 1=#6, Input stream 2=#3.Output stream 3 -> Identity "Target" => #7
#7.Output stream 1 -> Identity => #8
#7.Output stream 1 -> Identity => #9
#7.Output stream 1 -> Identity => #10
#7.Output stream 1 -> Identity => #11
#3.Output stream 2 -> Stimulation Filter "Stimulus 1" => #12
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
New input[0]=#12, New input[1]=#7.Output stream 2 -> Target-NonTarget-Separator => #13
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#8, Input stimulations=#13.Stimulations -> Stimulation based epoching => #14
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#14.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_BlockTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#8, Input stimulations=#13.New output -> Stimulation based epoching => #16
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#16.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_BlockNonTarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#3.Output stream 2 -> Stimulation Filter "Stimulus 2" => #18
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
New input[0]=#18, New input[1]=#7.Output stream 2 -> Target-NonTarget-Separator => #19
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#9, Input stimulations=#19.Stimulations -> Stimulation based epoching => #20
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#20.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_BlockTarget2[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#9, Input stimulations=#19.New output -> Stimulation based epoching => #22
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#22.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_BlockNonTarget2[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#3.Output stream 2 -> Stimulation Filter "Stimulus 3" => #24
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#24, New input[1]=#7.Output stream 2 -> Target-NonTarget-Separator => #25
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#10, Input stimulations=#25.Stimulations -> Stimulation based epoching => #26
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#26.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_BlockTarget3[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#10, Input stimulations=#25.New output -> Stimulation based epoching => #28
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#28.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_BlockNonTarget3[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#3.Output stream 2 -> Stimulation Filter "Stimulus 4" => #30
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#30, New input[1]=#7.Output stream 2 -> Target-NonTarget-Separator => #31
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#11, Input stimulations=#31.Stimulations -> Stimulation based epoching => #32
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#32.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_BlockTarget4[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#11, Input stimulations=#31.New output -> Stimulation based epoching => #34
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#34.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-trialSignal_BlockNonTarget4[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#3.Output stream 1 -> Identity "256Hz" => #36
Input signal=#36, Input stimulations=#25.Stimulations -> Stimulation based epoching "SBE BlockEpoc" => #37
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
Input signal=#36, Input stimulations=#31.Stimulations -> Stimulation based epoching "SBE BlockEpoc" => #38
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
Input stream 1=#37.Epoched signal, Input stream 2=#38.Epoched signal -> Streamed matrix multiplexer
-> CSV File Writer "SBE_TargetB"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_TargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#36, Input stimulations=#25.New output -> Stimulation based epoching "SBE BlockEpoc" => #41
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
Input signal=#36, Input stimulations=#31.New output -> Stimulation based epoching "SBE BlockEpoc" => #42
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
Input stream 1=#41.Epoched signal, Input stream 2=#42.Epoched signal -> Streamed matrix multiplexer
-> CSV File Writer "SBE_NonTargetB"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_NonTargetB[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#3.Output stream 1 -> Identity "256Hz" => #45
Input signal=#45, Input stimulations=#13.Stimulations -> Stimulation based epoching "SBE BlockEpoc" => #46
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
Input signal=#45, Input stimulations=#19.Stimulations -> Stimulation based epoching "SBE BlockEpoc" => #47
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
Input stream 1=#46.Epoched signal, Input stream 2=#47.Epoched signal -> Streamed matrix multiplexer
-> CSV File Writer "SBE_TargetA"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_TargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#45, Input stimulations=#13.New output -> Stimulation based epoching "SBE BlockEpoc" => #50
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
Input signal=#45, Input stimulations=#19.New output -> Stimulation based epoching "SBE BlockEpoc" => #51
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
Input stream 1=#50.Epoched signal, Input stream 2=#51.Epoched signal -> Streamed matrix multiplexer
-> CSV File Writer "SBE_NonTargetA"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE_NonTargetA[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #54
#54.Output stream 1 -> Identity => #55
New input[0]=#54.Output stream 2, New input[1]=#54.Output stream 3 -> Target-NonTarget-Separator => #56
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#55, Input stimulations=#56.Stimulations -> Stimulation based epoching => #57
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#57.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-AllTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Input signal=#55, Input stimulations=#56.New output -> Stimulation based epoching => #59
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.9_Offset-0.0.cfg
#59.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300-SBE-AllNonTarget[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#0.Output stream 1 -> Channel Selector "1;2;3;4;5;6;7;8" => #61
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#61, Input stream 2=#0.Output stream 5 -> Identity => #62
#62.Output stream 1 -> Temporal filter "LowPASS 9Hz for P300 signals" => #63
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 9.0
  Pass band ripple (dB) = 0.500000
-> Signal Decimation 1/4 => #64
  Decimation factor = 4
Input signal=#64, Input stimulations=#62.Output stream 2 -> Stimulation based epoching "SBE Label1" => #65
  Epoch duration (in sec) = 0.700000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#65.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator => #67
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300FeatureInput_1 [$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#67 -> Classifier processor "4cls-p300-classifier-1" => #69
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-1.cfg
#69.Hyperplane distance -> CSV File Writer "P300_DS1"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_DS1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#69.Probability values -> CSV File Writer "P300_PROB1"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_PROB1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#67 -> Classifier processor "2cls-p300-classifier-A" => #72
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifier-A.cfg
#72.Hyperplane distance -> CSV File Writer "P300_DSA(1)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_DSA(1)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#72.Probability values -> CSV File Writer "P300_PROBA(1)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_PROBA(1)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#64, Input stimulations=#62.Output stream 2 -> Stimulation based epoching "SBE Label2" => #75
  Epoch duration (in sec) = 0.700000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#75.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator => #77
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300FeatureInput_2 [$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#77 -> Classifier processor "4cls-p300-classifier-2" => #79
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-2.cfg
#79.Hyperplane distance -> CSV File Writer "P300_DS2"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_DS2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#79.Probability values -> CSV File Writer "P300_PROB2"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_PROB2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#77 -> Classifier processor "2cls-p300-classifier-A" => #82
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifier-A.cfg
#82.Hyperplane distance -> CSV File Writer "P300_DSA(2)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_DSA(2)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#82.Probability values -> CSV File Writer "P300_PROBA(2)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_PROBA(2)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#64, Input stimulations=#62.Output stream 2 -> Stimulation based epoching "SBE Label4" => #85
  Epoch duration (in sec) = 0.700000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#85.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator => #87
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300FeatureInput_4 [$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#87 -> Classifier processor "4cls-p300-classifier-4" => #89
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-4.cfg
#89.Hyperplane distance -> CSV File Writer "P300_DS4"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_DS4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#89.Probability values -> CSV File Writer "P300_PROB4"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_PROB4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#87 -> Classifier processor "2cls-p300-classifier-B" => #92
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifier-B.cfg
#92.Hyperplane distance -> CSV File Writer "P300_DSB(4)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_DSB(4)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#92.Probability values -> CSV File Writer "P300_PROBB(4)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_PROBB(4)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#64, Input stimulations=#62.Output stream 2 -> Stimulation based epoching "SBE Label3" => #95
  Epoch duration (in sec) = 0.700000
  Epoch offset (in sec) = 0.100000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#95.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] P300EpochAverage_5.cfg
-> Feature aggregator => #97
-> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] P300FeatureInput_3 [$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#97 -> Classifier processor "4cls-p300-classifier-3" => #99
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-p300-classifier-3.cfg
#99.Hyperplane distance -> CSV File Writer "P300_DS3"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_DS3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#99.Probability values -> CSV File Writer "P300_PROB3"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_PROB3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Classification result 0=#69.Hyperplane distance, Classification result 1=#79.Hyperplane distance, Classification result 2=#99.Hyperplane distance, Classification result 3=#89.Hyperplane distance -> P300 Voting Classifier(1)
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation Filter (P300-Classification-Result) => #103
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_04
-> Stimulation listener "Result P300 Voting Classifier (1)"
  Log level to use = Information
#103 -> CSV File Writer "Result_P300(DS)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] Result_P300(DS)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#97 -> Classifier processor "2cls-p300-classifier-B" => #106
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifier-B.cfg
#106.Hyperplane distance -> CSV File Writer "P300_DSB(3)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_DSB(3)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#106.Probability values -> CSV File Writer "P300_PROBB(3)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_PROBB(3)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#63 -> Channel Selector "1;5;6;" => #109
  Channel List = 1;5;6;
  Action = Select
  Channel Matching Method = Smart
Input signal=#109, Input stimulations=#62.Output stream 2 -> Stimulation based epoching "SBE" => #110
  Epoch duration (in sec) = 0.9
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.3_Offset-0.1.cfg
#110.Epoched signal -> Feature aggregator
-> Classifier processor "2cls-p300-classifierAB" => #112
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-p300-classifierAB.cfg
#112.Probability values -> CSV File Writer "P300_PROB_AB"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/P300_PROB_AB[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Data=#0.Output stream 1, Stimulations=#0.Output stream 5 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Output stream 1 -> Channel Selector "9;10;11;12;13;14;15;16" => #115
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
Input signal=#115, Input stimulations=#0.Output stream 5 -> Stimulation based epoching "SBE (Trigger: P300 TrialStart)" => #116
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.5
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] SBE_Duration-6.0_Offset-1.5.cfg
#116.Epoched signal -> Spatial Filter 1
  Spatial Filter Coefficients = -2.022585e-001 -4.815496e-001 6.849506e-001 -1.765709e-001 1.929389e-001 -1.268345e-001 -2.369950e-001 3.426189e-001 2.074357e-001 4.478262e-001 -1.290958e-002 -2.795452e-001 5.338678e-001 4.647860e-003 -5.375746e-001 -3.226252e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6
  High cut frequency (Hz) = 7.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-1.cfg
-> Time based epoching "TBE" => #119
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> 0xc73e83ec (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles(.csv)/recordTBETarget1[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#119 -> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #124
-> Classifier processor "4cls-SSVEPclassifier-1" => #125
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-1.cfg
#125.Hyperplane distance -> CSV File Writer "SSVEP_DS1"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_DS1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#125.Probability values -> Epoch average "EPOC17" => #127
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "SSVEP_PROB1"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_PROB1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#69.Probability values, Input stream 2=#127 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #130
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "HYBRID_PROB1"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/HYBRID_PROB1[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#124 -> Classifier processor "2cls-SSVEPclassifier-A" => #132
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-SSVEPclassifier-A.cfg
#132.Hyperplane distance -> CSV File Writer "SSVEP_DSA(1)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_DSA(1)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#132.Probability values -> Epoch average "EPOC17"
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "SSVEP_PROBA(1)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_PROBA(1)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#124 -> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] SSVEPFeatureInput_1 [$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#116.Epoched signal -> Spatial Filter 2
  Spatial Filter Coefficients = 4.604956e-001 -3.430678e-001 -6.201705e-001 -1.635623e-001 2.329563e-001 3.789724e-001 -2.046649e-001 1.382309e-001 1.523305e-001 -5.727307e-001 4.970718e-001 -1.254064e-002 -5.111636e-001 5.029230e-002 -1.996842e-001 3.128035e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 15.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #143
-> Classifier processor "4cls-SSVEPclassifier-2" => #144
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-2.cfg
#144.Hyperplane distance -> CSV File Writer "SSVEP_DS2"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_DS2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#144.Probability values -> Epoch average "EPOC17" => #146
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "SSVEP_PROB2"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_PROB2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#79.Probability values, Input stream 2=#146 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #149
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "HYBRID_PROB2"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/HYBRID_PROB2[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#143 -> Classifier processor "2cls-SSVEPclassifier-A" => #151
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-SSVEPclassifier-A.cfg
#151.Hyperplane distance -> CSV File Writer "SSVEP_DSA(2)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_DSA(2)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#151.Probability values -> Epoch average "EPOC17"
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "SSVEP_PROBA(2)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_PROBA(2)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#143 -> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] SSVEPFeatureInput_2 [$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#116.Epoched signal -> Spatial Filter 3
  Spatial Filter Coefficients = 4.479781e-001 4.396493e-001 -4.526437e-001 -1.182826e-001 1.584666e-001 2.428051e-001 -3.349423e-001 -4.369149e-001 1.740359e-001 2.430989e-001 -5.377834e-001 -6.275738e-001 2.280818e-001 4.111419e-001 7.453702e-002 -3.065836e-002
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 12.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #162
-> Classifier processor "4cls-SSVEPclassifier-3" => #163
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-3.cfg
#163.Hyperplane distance -> CSV File Writer "SSVEP_DS3"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_DS3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#163.Probability values -> Epoch average "EPOC17" => #165
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "SSVEP_PROB3"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_PROB3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#99.Probability values, Input stream 2=#165 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #168
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "HYBRID_PROB3"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/HYBRID_PROB3[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#162 -> Classifier processor "2cls-SSVEPclassifier-B" => #170
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-SSVEPclassifier-B.cfg
#170.Hyperplane distance -> CSV File Writer "SSVEP_DSB(3)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_DSB(3)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#170.Probability values -> Epoch average "EPOC17"
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "SSVEP_PROBB(3)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_PROBB(3)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#162 -> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] SSVEPFeatureInput_3 [$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#116.Epoched signal -> Spatial Filter 4
  Spatial Filter Coefficients = -3.562240e-001 -9.098580e-002 5.587582e-001 -2.813979e-001 4.957147e-001 4.419742e-002 -4.722861e-001 5.186411e-002 4.706498e-002 1.158752e-001 8.248838e-001 -2.828989e-001 -1.593569e-002 1.220457e-001 -2.149041e-001 -4.031873e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 20.9999
  Pass band ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1-Hybrid] TemporalFilterFreq/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1.2
  Epoch 1 intervals (in sec) = 0.3
  0x8d21ff41 = ${Player_ScenarioDirectory}/[4-Hybrid] SSVEPClassifierFiles/[4] TBE_Duration-1.2_Window-0.3.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #181
-> Classifier processor "4cls-SSVEPclassifier-4" => #182
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/4cls-SSVEPclassifier-4.cfg
#182.Hyperplane distance -> CSV File Writer "SSVEP_DS4"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_DS4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#182.Probability values -> Epoch average "EPOC17" => #184
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "SSVEP_PROB4"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_PROB4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input stream 1=#89.Probability values, Input stream 2=#184 -> Streamed matrix multiplexer
-> Epoch average "EPOC 2 (Merge)" => #187
  Averaging type = Epoch block average
  Epoch count = 2
-> CSV File Writer "HYBRID_PROB4"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/HYBRID_PROB4[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Classification result 0=#130, Classification result 1=#149, Classification result 2=#168, Classification result 3=#187 -> Hybrid Voting Classifier (1) => #189
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation listener "Result Hybrid Voting Classifier (1)"
  Log level to use = Information
#189 -> CSV File Writer "Result_HYBRID(PROB)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] Result_HYBRID(PROB).csv
  Column separator = ;
  Precision = 10
Classification result 0=#125.Hyperplane distance, Classification result 1=#144.Hyperplane distance, Classification result 2=#163.Hyperplane distance, Classification result 3=#182.Hyperplane distance -> SSVEP Voting Classifier (17) => #192
  Number of repetitions = 17
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> Stimulation listener "Result SSVEP Voting Classifier (17)"
  Log level to use = Information
#192 -> CSV File Writer "Result_SSVEP(DS)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] Result_SSVEP(DS)[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
#181 -> Classifier processor "2cls-SSVEPclassifier-B" => #195
  Filename to load configuration from = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/2cls-SSVEPclassifier-B.cfg
#195.Hyperplane distance -> CSV File Writer "SSVEP_DSB(4)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_DSB(4)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#195.Probability values -> Epoch average "EPOC17"
  Averaging type = Epoch block average
  Epoch count = 17
-> CSV File Writer "SSVEP_PROBB(4)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/SSVEP_PROBB(4)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
#181 -> (Debug) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] SSVEPFeatureInput_4 [$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
Input signal=#0.Output stream 1, Input stimulations=#0.Output stream 5 -> Stimulation based epoching => #200
  Epoch duration (in sec) = 7.5
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] Experiment/[6] SBE_Duration-7.5_Offset-0.0.cfg
#200.Epoched signal -> (During Trial) Trial CSV File Writer
  Filename = ${Player_ScenarioDirectory}/PersonalData (csv)/[6] TrialRawSignal(16ch_7.5sec)[$core{date}-$core{time}].csv
  Column separator = ,
  Precision = 10
