OpenViBE-Scenario
Comment
  [6-Hybrid] ExperimentalSignalFiles/[6] AcquiredSignal(ALL).cfg
Comment
  Take 16Ch for trial duration (7.5 seconds)
  256Hz * 7.5sec * 4trials = 7680 plots
Comment
  Take 8Chs from 1.5 to 7.5 seconds (6.0 seconds)
  256Hz * 6sec * 4trials = 6144 plots
Comment
  Target and NonTarget Stimulus in duration
  256 * 0.4 = 102 plots
  TARGET = 5 times * 4 trials * 102 plots = 2040 plots
  NonTARGET = 20 times * 4 trials * 102 plots = 8160 plots
Comment
  Target and NonTarget Stimulus for Target1
  256 * 0.4 = 102 plots
  TARGET = 5 times * 102 plots = 510 plots
  NonTARGET = 15 times * 102 plots = 1530 plots

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[2016.01.24-07.37.15]AcquiredSignal(Exp).ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] AcquiredSignal(ALL).cfg
#0.Output stream 1 -> Channel Selector "9;10;11;12;13;14;15;16" => #1
  Channel List = 9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
Input signal=#1, Input stimulations=#0.Output stream 5 -> Stimulation based epoching "SBE (Trigger: P300 TrialStart)" => #2
  Epoch duration (in sec) = 6.0
  Epoch offset (in sec) = 1.5
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] SBE_Duration-6.0_Offset-1.5.cfg
#2.Epoched signal -> (During Trial) SSVEP CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]SSVEPRawSignal(8ch_6.0sec).csv
  Column separator = ;
  Precision = 10
#0.Output stream 3 -> Stimulation Filter "Stimulus 1-4+5" => #4
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#4 -> Identity => #5
#5.Output stream 2 -> Stimulation Filter "Stimulus 1" => #6
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
#5.Output stream 2 -> Stimulation Filter "Stimulus 2" => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
Input stream 1=#5.Output stream 1, Input stream 2=#5.Output stream 3 -> Identity "Stimulus Onsets" => #8
#8.Output stream 1 -> Identity => #9
New input[0]=#6, New input[1]=#8.Output stream 2 -> Target-NonTarget-Separator => #10
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#9, Input stimulations=#10.Stimulations -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#11.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-Target1.csv
  Column separator = ;
  Precision = 10
Input signal=#9, Input stimulations=#10.New output -> Stimulation based epoching => #13
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#13.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-NonTarget1.csv
  Column separator = ;
  Precision = 10
#8.Output stream 1 -> Identity => #15
New input[0]=#7, New input[1]=#8.Output stream 2 -> Target-NonTarget-Separator => #16
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#15, Input stimulations=#16.Stimulations -> Stimulation based epoching => #17
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#17.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-Target2.csv
  Column separator = ;
  Precision = 10
Input signal=#15, Input stimulations=#16.New output -> Stimulation based epoching => #19
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#19.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-NonTarget2.csv
  Column separator = ;
  Precision = 10
#8.Output stream 1 -> Identity => #21
#8.Output stream 1 -> Identity => #22
#5.Output stream 2 -> Stimulation Filter "Stimulus 3" => #23
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
New input[0]=#23, New input[1]=#8.Output stream 2 -> Target-NonTarget-Separator => #24
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#21, Input stimulations=#24.Stimulations -> Stimulation based epoching => #25
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#25.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-Target3.csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#24.New output -> Stimulation based epoching => #27
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#27.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-NonTarget3.csv
  Column separator = ;
  Precision = 10
#5.Output stream 2 -> Stimulation Filter "Stimulus 4" => #29
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#29, New input[1]=#8.Output stream 2 -> Target-NonTarget-Separator => #30
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#22, Input stimulations=#30.Stimulations -> Stimulation based epoching => #31
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#31.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-Target4.csv
  Column separator = ;
  Precision = 10
Input signal=#22, Input stimulations=#30.New output -> Stimulation based epoching => #33
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#33.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-NonTarget4.csv
  Column separator = ;
  Precision = 10
#0.Output stream 2 -> Stimulation listener "Target Stimulus"
  Log level to use = Information
Data=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #37
#37.Output stream 1 -> Identity => #38
New input[0]=#37.Output stream 2, New input[1]=#37.Output stream 3 -> Target-NonTarget-Separator => #39
  Lua Script = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#38, Input stimulations=#39.Stimulations -> Stimulation based epoching => #40
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#40.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-AllTarget.csv
  Column separator = ;
  Precision = 10
Input signal=#38, Input stimulations=#39.New output -> Stimulation based epoching => #42
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/[5-Hybrid] P300ClassifierFiles/[5] SBE_Duration-0.4_Offset-0.1.cfg
#42.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]-P300-SBE-AllNonTarget.csv
  Column separator = ;
  Precision = 10
Input signal=#0.Output stream 1, Input stimulations=#0.Output stream 5 -> Stimulation based epoching => #44
  Epoch duration (in sec) = 7.5
  Epoch offset (in sec) = 0.0
  Stimulation to epoch from = OVTK_StimulationId_TrialStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/[6-Hybrid] ExperimentalSignalFiles/[6] SBE_Duration-7.5_Offset-0.0.cfg
#44.Epoched signal -> (During Trial) Trial CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[7-Hybrid] P300TargetSeparator/[$core{date}-$core{time}]TrialRawSignal(16ch_7.5sec).csv
  Column separator = ,
  Precision = 10
